WorkflowBuilder(Version=2.8.0)
ExternalizedMapping(Value(DisplayName=session))
-> StringProperty(Value=C:\behavior_data\447-2-D\0\behavior_0_2025-02-16_14-54-58)
-> BehaviorSubject RootPath

GroupWorkflow FIP
    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\CameraSerial_Green.csv, ScanPattern=%s, SkipRows=0)
    -> PropertyMapping(SerialNumber)
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391007, ColorProcessing=Default) => #2
    -> Skip(Count=0)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Green => #7
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #9
    SubscribeSubject CurrentRois_G
    -> PropertyMapping(Regions) => #11
    #7, #11 -> Bonsai.Vision.RoiActivity => #12
      Regions
        ArrayOfPoint
          Point(X=98, Y=61)
          Point(X=98, Y=64)
          Point(X=97, Y=66)
          Point(X=96, Y=69)
          Point(X=95, Y=71)
          Point(X=93, Y=73)
          Point(X=91, Y=75)
          Point(X=88, Y=76)
          Point(X=86, Y=77)
          Point(X=83, Y=77)
          Point(X=81, Y=77)
          Point(X=79, Y=76)
          Point(X=76, Y=75)
          Point(X=74, Y=73)
          Point(X=72, Y=71)
          Point(X=71, Y=69)
          Point(X=70, Y=66)
          Point(X=69, Y=64)
          Point(X=69, Y=61)
          Point(X=69, Y=58)
          Point(X=70, Y=56)
          Point(X=71, Y=53)
          Point(X=72, Y=51)
          Point(X=74, Y=49)
          Point(X=76, Y=47)
          Point(X=79, Y=46)
          Point(X=81, Y=45)
          Point(X=83, Y=45)
          Point(X=86, Y=45)
          Point(X=88, Y=46)
          Point(X=91, Y=47)
          Point(X=93, Y=49)
          Point(X=95, Y=51)
          Point(X=96, Y=53)
          Point(X=97, Y=56)
          Point(X=98, Y=58)
        ArrayOfPoint
          Point(X=152, Y=41)
          Point(X=152, Y=44)
          Point(X=151, Y=46)
          Point(X=150, Y=49)
          Point(X=148, Y=52)
          Point(X=147, Y=54)
          Point(X=145, Y=56)
          Point(X=142, Y=57)
          Point(X=140, Y=58)
          Point(X=137, Y=58)
          Point(X=134, Y=58)
          Point(X=132, Y=57)
          Point(X=129, Y=56)
          Point(X=127, Y=54)
          Point(X=126, Y=52)
          Point(X=124, Y=49)
          Point(X=123, Y=46)
          Point(X=122, Y=44)
          Point(X=122, Y=41)
          Point(X=122, Y=37)
          Point(X=123, Y=35)
          Point(X=124, Y=32)
          Point(X=126, Y=29)
          Point(X=127, Y=27)
          Point(X=129, Y=25)
          Point(X=132, Y=24)
          Point(X=134, Y=23)
          Point(X=137, Y=23)
          Point(X=140, Y=23)
          Point(X=142, Y=24)
          Point(X=144, Y=25)
          Point(X=147, Y=27)
          Point(X=148, Y=29)
          Point(X=150, Y=32)
          Point(X=151, Y=35)
          Point(X=152, Y=37)
        ArrayOfPoint
          Point(X=183, Y=86)
          Point(X=183, Y=89)
          Point(X=182, Y=92)
          Point(X=181, Y=95)
          Point(X=179, Y=97)
          Point(X=178, Y=99)
          Point(X=175, Y=101)
          Point(X=173, Y=102)
          Point(X=171, Y=103)
          Point(X=168, Y=103)
          Point(X=165, Y=103)
          Point(X=163, Y=102)
          Point(X=161, Y=101)
          Point(X=158, Y=99)
          Point(X=157, Y=97)
          Point(X=155, Y=95)
          Point(X=154, Y=92)
          Point(X=153, Y=89)
          Point(X=153, Y=86)
          Point(X=153, Y=83)
          Point(X=154, Y=80)
          Point(X=155, Y=77)
          Point(X=157, Y=75)
          Point(X=158, Y=73)
          Point(X=161, Y=71)
          Point(X=163, Y=70)
          Point(X=165, Y=69)
          Point(X=168, Y=69)
          Point(X=171, Y=69)
          Point(X=173, Y=70)
          Point(X=175, Y=71)
          Point(X=178, Y=73)
          Point(X=179, Y=75)
          Point(X=181, Y=77)
          Point(X=182, Y=80)
          Point(X=183, Y=83)
        ArrayOfPoint
          Point(X=128, Y=123)
          Point(X=128, Y=126)
          Point(X=127, Y=129)
          Point(X=126, Y=132)
          Point(X=124, Y=134)
          Point(X=122, Y=136)
          Point(X=120, Y=138)
          Point(X=118, Y=139)
          Point(X=115, Y=140)
          Point(X=112, Y=140)
          Point(X=110, Y=140)
          Point(X=107, Y=139)
          Point(X=105, Y=138)
          Point(X=103, Y=136)
          Point(X=101, Y=134)
          Point(X=99, Y=132)
          Point(X=98, Y=129)
          Point(X=97, Y=126)
          Point(X=97, Y=123)
          Point(X=97, Y=121)
          Point(X=98, Y=118)
          Point(X=99, Y=115)
          Point(X=101, Y=113)
          Point(X=103, Y=111)
          Point(X=105, Y=109)
          Point(X=107, Y=108)
          Point(X=110, Y=107)
          Point(X=112, Y=107)
          Point(X=115, Y=107)
          Point(X=118, Y=108)
          Point(X=120, Y=109)
          Point(X=122, Y=111)
          Point(X=124, Y=113)
          Point(X=126, Y=115)
          Point(X=127, Y=118)
          Point(X=128, Y=121)
        ArrayOfPoint(Point(X=1, Y=129), Point(X=28, Y=129), Point(X=28, Y=199), Point(X=1, Y=199))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green0 => #15
    #12 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green1 => #18
    #12 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #20
    #12 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #22
    #12 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #24
    #9, #15, #18, #20, #22, #24 -> Zip => #25
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataG_.csv, Selector="")
    -> PropertyMapping(FileName) => #28
    #25, #28 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\447-2-D\0\behavior_0_2025-02-16_14-54-58/fib/FIP_DataG_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawG_.bin, Selector="")
    -> PropertyMapping(Path) => #32
    #7, #32 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\447-2-D\0\behavior_0_2025-02-16_14-54-58/fib/FIP_RawG_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #2 -> Skip(Count=1)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Iso => #38
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #40
    SubscribeSubject CurrentRois_G
    -> PropertyMapping(Regions) => #42
    #38, #42 -> Bonsai.Vision.RoiActivity => #43
      Regions
        ArrayOfPoint
          Point(X=98, Y=61)
          Point(X=98, Y=64)
          Point(X=97, Y=66)
          Point(X=96, Y=69)
          Point(X=95, Y=71)
          Point(X=93, Y=73)
          Point(X=91, Y=75)
          Point(X=88, Y=76)
          Point(X=86, Y=77)
          Point(X=83, Y=77)
          Point(X=81, Y=77)
          Point(X=79, Y=76)
          Point(X=76, Y=75)
          Point(X=74, Y=73)
          Point(X=72, Y=71)
          Point(X=71, Y=69)
          Point(X=70, Y=66)
          Point(X=69, Y=64)
          Point(X=69, Y=61)
          Point(X=69, Y=58)
          Point(X=70, Y=56)
          Point(X=71, Y=53)
          Point(X=72, Y=51)
          Point(X=74, Y=49)
          Point(X=76, Y=47)
          Point(X=79, Y=46)
          Point(X=81, Y=45)
          Point(X=83, Y=45)
          Point(X=86, Y=45)
          Point(X=88, Y=46)
          Point(X=91, Y=47)
          Point(X=93, Y=49)
          Point(X=95, Y=51)
          Point(X=96, Y=53)
          Point(X=97, Y=56)
          Point(X=98, Y=58)
        ArrayOfPoint
          Point(X=152, Y=41)
          Point(X=152, Y=44)
          Point(X=151, Y=46)
          Point(X=150, Y=49)
          Point(X=148, Y=52)
          Point(X=147, Y=54)
          Point(X=145, Y=56)
          Point(X=142, Y=57)
          Point(X=140, Y=58)
          Point(X=137, Y=58)
          Point(X=134, Y=58)
          Point(X=132, Y=57)
          Point(X=129, Y=56)
          Point(X=127, Y=54)
          Point(X=126, Y=52)
          Point(X=124, Y=49)
          Point(X=123, Y=46)
          Point(X=122, Y=44)
          Point(X=122, Y=41)
          Point(X=122, Y=37)
          Point(X=123, Y=35)
          Point(X=124, Y=32)
          Point(X=126, Y=29)
          Point(X=127, Y=27)
          Point(X=129, Y=25)
          Point(X=132, Y=24)
          Point(X=134, Y=23)
          Point(X=137, Y=23)
          Point(X=140, Y=23)
          Point(X=142, Y=24)
          Point(X=144, Y=25)
          Point(X=147, Y=27)
          Point(X=148, Y=29)
          Point(X=150, Y=32)
          Point(X=151, Y=35)
          Point(X=152, Y=37)
        ArrayOfPoint
          Point(X=183, Y=86)
          Point(X=183, Y=89)
          Point(X=182, Y=92)
          Point(X=181, Y=95)
          Point(X=179, Y=97)
          Point(X=178, Y=99)
          Point(X=175, Y=101)
          Point(X=173, Y=102)
          Point(X=171, Y=103)
          Point(X=168, Y=103)
          Point(X=165, Y=103)
          Point(X=163, Y=102)
          Point(X=161, Y=101)
          Point(X=158, Y=99)
          Point(X=157, Y=97)
          Point(X=155, Y=95)
          Point(X=154, Y=92)
          Point(X=153, Y=89)
          Point(X=153, Y=86)
          Point(X=153, Y=83)
          Point(X=154, Y=80)
          Point(X=155, Y=77)
          Point(X=157, Y=75)
          Point(X=158, Y=73)
          Point(X=161, Y=71)
          Point(X=163, Y=70)
          Point(X=165, Y=69)
          Point(X=168, Y=69)
          Point(X=171, Y=69)
          Point(X=173, Y=70)
          Point(X=175, Y=71)
          Point(X=178, Y=73)
          Point(X=179, Y=75)
          Point(X=181, Y=77)
          Point(X=182, Y=80)
          Point(X=183, Y=83)
        ArrayOfPoint
          Point(X=128, Y=123)
          Point(X=128, Y=126)
          Point(X=127, Y=129)
          Point(X=126, Y=132)
          Point(X=124, Y=134)
          Point(X=122, Y=136)
          Point(X=120, Y=138)
          Point(X=118, Y=139)
          Point(X=115, Y=140)
          Point(X=112, Y=140)
          Point(X=110, Y=140)
          Point(X=107, Y=139)
          Point(X=105, Y=138)
          Point(X=103, Y=136)
          Point(X=101, Y=134)
          Point(X=99, Y=132)
          Point(X=98, Y=129)
          Point(X=97, Y=126)
          Point(X=97, Y=123)
          Point(X=97, Y=121)
          Point(X=98, Y=118)
          Point(X=99, Y=115)
          Point(X=101, Y=113)
          Point(X=103, Y=111)
          Point(X=105, Y=109)
          Point(X=107, Y=108)
          Point(X=110, Y=107)
          Point(X=112, Y=107)
          Point(X=115, Y=107)
          Point(X=118, Y=108)
          Point(X=120, Y=109)
          Point(X=122, Y=111)
          Point(X=124, Y=113)
          Point(X=126, Y=115)
          Point(X=127, Y=118)
          Point(X=128, Y=121)
        ArrayOfPoint(Point(X=1, Y=129), Point(X=28, Y=129), Point(X=28, Y=199), Point(X=1, Y=199))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso0 => #46
    #43 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso1 => #49
    #43 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #51
    #43 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #53
    #43 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #55
    #40, #46, #49, #51, #53, #55 -> Zip => #56
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataIso_.csv, Selector="")
    -> PropertyMapping(FileName) => #59
    #56, #59 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\447-2-D\0\behavior_0_2025-02-16_14-54-58/fib/FIP_DataIso_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawIso_.bin, Selector="")
    -> PropertyMapping(Path) => #63
    #38, #63 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\447-2-D\0\behavior_0_2025-02-16_14-54-58/fib/FIP_RawIso_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\CameraSerial_Red.csv, ScanPattern=%s, SkipRows=0)
    -> PropertyMapping(SerialNumber)
    -> Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391006, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #68
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #70
    #68 -> Bonsai.Vision.Flip(Mode=Horizontal)
    -> PublishSubject Red => #72
    SubscribeSubject CurrentRois_R
    -> PropertyMapping(Regions) => #74
    #72, #74 -> Bonsai.Vision.RoiActivity => #75
      Regions
        ArrayOfPoint
          Point(X=84, Y=93)
          Point(X=84, Y=96)
          Point(X=83, Y=99)
          Point(X=82, Y=102)
          Point(X=80, Y=105)
          Point(X=78, Y=107)
          Point(X=76, Y=109)
          Point(X=74, Y=110)
          Point(X=71, Y=111)
          Point(X=68, Y=111)
          Point(X=66, Y=111)
          Point(X=63, Y=110)
          Point(X=61, Y=109)
          Point(X=59, Y=107)
          Point(X=57, Y=105)
          Point(X=55, Y=102)
          Point(X=54, Y=99)
          Point(X=53, Y=96)
          Point(X=53, Y=93)
          Point(X=53, Y=90)
          Point(X=54, Y=87)
          Point(X=55, Y=84)
          Point(X=57, Y=81)
          Point(X=59, Y=79)
          Point(X=61, Y=77)
          Point(X=63, Y=76)
          Point(X=66, Y=75)
          Point(X=68, Y=75)
          Point(X=71, Y=75)
          Point(X=74, Y=76)
          Point(X=76, Y=77)
          Point(X=78, Y=79)
          Point(X=80, Y=81)
          Point(X=82, Y=84)
          Point(X=83, Y=87)
          Point(X=84, Y=90)
        ArrayOfPoint
          Point(X=133, Y=70)
          Point(X=133, Y=73)
          Point(X=132, Y=76)
          Point(X=131, Y=78)
          Point(X=130, Y=80)
          Point(X=128, Y=82)
          Point(X=126, Y=84)
          Point(X=124, Y=85)
          Point(X=121, Y=86)
          Point(X=119, Y=86)
          Point(X=117, Y=86)
          Point(X=114, Y=85)
          Point(X=112, Y=84)
          Point(X=110, Y=82)
          Point(X=108, Y=80)
          Point(X=107, Y=78)
          Point(X=106, Y=76)
          Point(X=105, Y=73)
          Point(X=105, Y=70)
          Point(X=105, Y=68)
          Point(X=106, Y=65)
          Point(X=107, Y=63)
          Point(X=108, Y=61)
          Point(X=110, Y=59)
          Point(X=112, Y=57)
          Point(X=114, Y=56)
          Point(X=117, Y=55)
          Point(X=119, Y=55)
          Point(X=121, Y=55)
          Point(X=124, Y=56)
          Point(X=126, Y=57)
          Point(X=128, Y=59)
          Point(X=130, Y=61)
          Point(X=131, Y=63)
          Point(X=132, Y=65)
          Point(X=133, Y=68)
        ArrayOfPoint
          Point(X=165, Y=119)
          Point(X=165, Y=122)
          Point(X=164, Y=125)
          Point(X=163, Y=128)
          Point(X=161, Y=130)
          Point(X=160, Y=132)
          Point(X=158, Y=134)
          Point(X=155, Y=135)
          Point(X=153, Y=136)
          Point(X=150, Y=136)
          Point(X=147, Y=136)
          Point(X=145, Y=135)
          Point(X=142, Y=134)
          Point(X=140, Y=132)
          Point(X=139, Y=130)
          Point(X=137, Y=128)
          Point(X=136, Y=125)
          Point(X=135, Y=122)
          Point(X=135, Y=119)
          Point(X=135, Y=117)
          Point(X=136, Y=114)
          Point(X=137, Y=111)
          Point(X=139, Y=109)
          Point(X=140, Y=107)
          Point(X=142, Y=105)
          Point(X=145, Y=104)
          Point(X=147, Y=103)
          Point(X=150, Y=103)
          Point(X=153, Y=103)
          Point(X=155, Y=104)
          Point(X=157, Y=105)
          Point(X=160, Y=107)
          Point(X=161, Y=109)
          Point(X=163, Y=111)
          Point(X=164, Y=114)
          Point(X=165, Y=117)
        ArrayOfPoint
          Point(X=110, Y=147)
          Point(X=110, Y=150)
          Point(X=109, Y=152)
          Point(X=108, Y=154)
          Point(X=107, Y=157)
          Point(X=105, Y=158)
          Point(X=103, Y=160)
          Point(X=101, Y=161)
          Point(X=98, Y=162)
          Point(X=96, Y=162)
          Point(X=94, Y=162)
          Point(X=91, Y=161)
          Point(X=89, Y=160)
          Point(X=87, Y=158)
          Point(X=85, Y=157)
          Point(X=84, Y=154)
          Point(X=83, Y=152)
          Point(X=82, Y=150)
          Point(X=82, Y=147)
          Point(X=82, Y=144)
          Point(X=83, Y=142)
          Point(X=84, Y=140)
          Point(X=85, Y=137)
          Point(X=87, Y=136)
          Point(X=89, Y=134)
          Point(X=91, Y=133)
          Point(X=94, Y=132)
          Point(X=96, Y=132)
          Point(X=98, Y=132)
          Point(X=101, Y=133)
          Point(X=103, Y=134)
          Point(X=105, Y=136)
          Point(X=107, Y=137)
          Point(X=108, Y=140)
          Point(X=109, Y=142)
          Point(X=110, Y=144)
        ArrayOfPoint(Point(X=4, Y=131), Point(X=30, Y=131), Point(X=30, Y=195), Point(X=4, Y=195))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red0 => #78
    #75 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red1 => #81
    #75 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #83
    #75 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #85
    #75 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #87
    #70, #78, #81, #83, #85, #87 -> Zip => #88
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_DataR_.csv, Selector="")
    -> PropertyMapping(FileName) => #91
    #88, #91 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\447-2-D\0\behavior_0_2025-02-16_14-54-58/fib/FIP_DataR_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_RawR_.bin, Selector="")
    -> PropertyMapping(Path) => #95
    #72, #95 -> Bonsai.Dsp.MatrixWriter(Path=C:\behavior_data\447-2-D\0\behavior_0_2025-02-16_14-54-58/fib/FIP_RawR_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

    Bonsai.Design.Visualizers.TableLayoutPanelBuilder "FIP Measurements"
      ColumnCount=4
      RowCount=6
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)

    SubscribeSubject Green
    -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]> => #99
      MemberName=Regions
      Value
        ArrayOfPoint
          Point(X=115, Y=62)
          Point(X=115, Y=65)
          Point(X=114, Y=67)
          Point(X=113, Y=70)
          Point(X=112, Y=72)
          Point(X=110, Y=74)
          Point(X=108, Y=76)
          Point(X=105, Y=77)
          Point(X=103, Y=78)
          Point(X=100, Y=78)
          Point(X=98, Y=78)
          Point(X=96, Y=77)
          Point(X=93, Y=76)
          Point(X=91, Y=74)
          Point(X=89, Y=72)
          Point(X=88, Y=70)
          Point(X=87, Y=67)
          Point(X=86, Y=65)
          Point(X=86, Y=62)
          Point(X=86, Y=59)
          Point(X=87, Y=57)
          Point(X=88, Y=54)
          Point(X=89, Y=52)
          Point(X=91, Y=50)
          Point(X=93, Y=48)
          Point(X=96, Y=47)
          Point(X=98, Y=46)
          Point(X=100, Y=46)
          Point(X=103, Y=46)
          Point(X=105, Y=47)
          Point(X=108, Y=48)
          Point(X=110, Y=50)
          Point(X=112, Y=52)
          Point(X=113, Y=54)
          Point(X=114, Y=57)
          Point(X=115, Y=59)
        ArrayOfPoint
          Point(X=74, Y=107)
          Point(X=74, Y=110)
          Point(X=73, Y=112)
          Point(X=72, Y=115)
          Point(X=70, Y=118)
          Point(X=69, Y=120)
          Point(X=67, Y=122)
          Point(X=64, Y=123)
          Point(X=62, Y=124)
          Point(X=59, Y=124)
          Point(X=56, Y=124)
          Point(X=54, Y=123)
          Point(X=51, Y=122)
          Point(X=49, Y=120)
          Point(X=48, Y=118)
          Point(X=46, Y=115)
          Point(X=45, Y=112)
          Point(X=44, Y=110)
          Point(X=44, Y=107)
          Point(X=44, Y=103)
          Point(X=45, Y=101)
          Point(X=46, Y=98)
          Point(X=48, Y=95)
          Point(X=49, Y=93)
          Point(X=51, Y=91)
          Point(X=54, Y=90)
          Point(X=56, Y=89)
          Point(X=59, Y=89)
          Point(X=62, Y=89)
          Point(X=64, Y=90)
          Point(X=66, Y=91)
          Point(X=69, Y=93)
          Point(X=70, Y=95)
          Point(X=72, Y=98)
          Point(X=73, Y=101)
          Point(X=74, Y=103)
        ArrayOfPoint
          Point(X=125, Y=149)
          Point(X=125, Y=152)
          Point(X=124, Y=155)
          Point(X=123, Y=158)
          Point(X=121, Y=160)
          Point(X=120, Y=162)
          Point(X=117, Y=164)
          Point(X=115, Y=165)
          Point(X=113, Y=166)
          Point(X=110, Y=166)
          Point(X=107, Y=166)
          Point(X=105, Y=165)
          Point(X=103, Y=164)
          Point(X=100, Y=162)
          Point(X=99, Y=160)
          Point(X=97, Y=158)
          Point(X=96, Y=155)
          Point(X=95, Y=152)
          Point(X=95, Y=149)
          Point(X=95, Y=146)
          Point(X=96, Y=143)
          Point(X=97, Y=140)
          Point(X=99, Y=138)
          Point(X=100, Y=136)
          Point(X=103, Y=134)
          Point(X=105, Y=133)
          Point(X=107, Y=132)
          Point(X=110, Y=132)
          Point(X=113, Y=132)
          Point(X=115, Y=133)
          Point(X=117, Y=134)
          Point(X=120, Y=136)
          Point(X=121, Y=138)
          Point(X=123, Y=140)
          Point(X=124, Y=143)
          Point(X=125, Y=146)
        ArrayOfPoint
          Point(X=160, Y=100)
          Point(X=160, Y=103)
          Point(X=159, Y=106)
          Point(X=158, Y=109)
          Point(X=156, Y=111)
          Point(X=154, Y=113)
          Point(X=152, Y=115)
          Point(X=150, Y=116)
          Point(X=147, Y=117)
          Point(X=144, Y=117)
          Point(X=142, Y=117)
          Point(X=139, Y=116)
          Point(X=137, Y=115)
          Point(X=135, Y=113)
          Point(X=133, Y=111)
          Point(X=131, Y=109)
          Point(X=130, Y=106)
          Point(X=129, Y=103)
          Point(X=129, Y=100)
          Point(X=129, Y=98)
          Point(X=130, Y=95)
          Point(X=131, Y=92)
          Point(X=133, Y=90)
          Point(X=135, Y=88)
          Point(X=137, Y=86)
          Point(X=139, Y=85)
          Point(X=142, Y=84)
          Point(X=144, Y=84)
          Point(X=147, Y=84)
          Point(X=150, Y=85)
          Point(X=152, Y=86)
          Point(X=154, Y=88)
          Point(X=156, Y=90)
          Point(X=158, Y=92)
          Point(X=159, Y=95)
          Point(X=160, Y=98)
        ArrayOfPoint(Point(X=1, Y=129), Point(X=28, Y=129), Point(X=28, Y=199), Point(X=1, Y=199))
        ArrayOfPoint(Point(X=163, Y=50), Point(X=163, Y=50), Point(X=163, Y=49), Point(X=163, Y=49))
    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false) => #100
    #99, #100 -> Sample
    -> MulticastSubject CurrentRois_G
    -> CreateObservable ROICsv_update
        WorkflowInput Source1
        -> Take(Count=1)
        -> SelectMany LogRois
            SubscribeSubject CurrentRois_G
            -> Merge
            -> ElementIndex
            -> SelectMany SaveSingleRoi
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Data

                SubscribeSubject Data
                -> MemberSelector(Selector=Index)
                -> AsyncSubject RoiIndex

                SubscribeSubject RoiIndex => #6
                SubscribeSubject Data
                -> MemberSelector(Selector=Value)
                -> Merge
                -> ElementIndex => #10
                #6, #10 -> CombineLatest
                -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Bonsai.IO.CsvWriter(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_G.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
        -> WorkflowOutput
    -> Merge
    -> DelaySubscription(DueTime=PT0.5S)

    SubscribeSubject Green
    -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]> => #107
      MemberName=Regions
      Value
        ArrayOfPoint
          Point(X=108, Y=67)
          Point(X=108, Y=70)
          Point(X=107, Y=72)
          Point(X=106, Y=75)
          Point(X=105, Y=77)
          Point(X=103, Y=79)
          Point(X=101, Y=81)
          Point(X=98, Y=82)
          Point(X=96, Y=83)
          Point(X=93, Y=83)
          Point(X=91, Y=83)
          Point(X=89, Y=82)
          Point(X=86, Y=81)
          Point(X=84, Y=79)
          Point(X=82, Y=77)
          Point(X=81, Y=75)
          Point(X=80, Y=72)
          Point(X=79, Y=70)
          Point(X=79, Y=67)
          Point(X=79, Y=64)
          Point(X=80, Y=62)
          Point(X=81, Y=59)
          Point(X=82, Y=57)
          Point(X=84, Y=55)
          Point(X=86, Y=53)
          Point(X=89, Y=52)
          Point(X=91, Y=51)
          Point(X=93, Y=51)
          Point(X=96, Y=51)
          Point(X=98, Y=52)
          Point(X=101, Y=53)
          Point(X=103, Y=55)
          Point(X=105, Y=57)
          Point(X=106, Y=59)
          Point(X=107, Y=62)
          Point(X=108, Y=64)
        ArrayOfPoint
          Point(X=45, Y=53)
          Point(X=45, Y=56)
          Point(X=44, Y=58)
          Point(X=43, Y=61)
          Point(X=41, Y=64)
          Point(X=40, Y=66)
          Point(X=38, Y=68)
          Point(X=35, Y=69)
          Point(X=33, Y=70)
          Point(X=30, Y=70)
          Point(X=27, Y=70)
          Point(X=25, Y=69)
          Point(X=22, Y=68)
          Point(X=20, Y=66)
          Point(X=19, Y=64)
          Point(X=17, Y=61)
          Point(X=16, Y=58)
          Point(X=15, Y=56)
          Point(X=15, Y=53)
          Point(X=15, Y=49)
          Point(X=16, Y=47)
          Point(X=17, Y=44)
          Point(X=19, Y=41)
          Point(X=20, Y=39)
          Point(X=22, Y=37)
          Point(X=25, Y=36)
          Point(X=27, Y=35)
          Point(X=30, Y=35)
          Point(X=33, Y=35)
          Point(X=35, Y=36)
          Point(X=37, Y=37)
          Point(X=40, Y=39)
          Point(X=41, Y=41)
          Point(X=43, Y=44)
          Point(X=44, Y=47)
          Point(X=45, Y=49)
        ArrayOfPoint
          Point(X=35, Y=115)
          Point(X=35, Y=118)
          Point(X=34, Y=121)
          Point(X=33, Y=124)
          Point(X=31, Y=126)
          Point(X=30, Y=128)
          Point(X=27, Y=130)
          Point(X=25, Y=131)
          Point(X=23, Y=132)
          Point(X=20, Y=132)
          Point(X=17, Y=132)
          Point(X=15, Y=131)
          Point(X=13, Y=130)
          Point(X=10, Y=128)
          Point(X=9, Y=126)
          Point(X=7, Y=124)
          Point(X=6, Y=121)
          Point(X=5, Y=118)
          Point(X=5, Y=115)
          Point(X=5, Y=112)
          Point(X=6, Y=109)
          Point(X=7, Y=106)
          Point(X=9, Y=104)
          Point(X=10, Y=102)
          Point(X=13, Y=100)
          Point(X=15, Y=99)
          Point(X=17, Y=98)
          Point(X=20, Y=98)
          Point(X=23, Y=98)
          Point(X=25, Y=99)
          Point(X=27, Y=100)
          Point(X=30, Y=102)
          Point(X=31, Y=104)
          Point(X=33, Y=106)
          Point(X=34, Y=109)
          Point(X=35, Y=112)
        ArrayOfPoint
          Point(X=91, Y=138)
          Point(X=91, Y=141)
          Point(X=90, Y=144)
          Point(X=89, Y=147)
          Point(X=87, Y=149)
          Point(X=85, Y=151)
          Point(X=83, Y=153)
          Point(X=81, Y=154)
          Point(X=78, Y=155)
          Point(X=75, Y=155)
          Point(X=73, Y=155)
          Point(X=70, Y=154)
          Point(X=68, Y=153)
          Point(X=66, Y=151)
          Point(X=64, Y=149)
          Point(X=62, Y=147)
          Point(X=61, Y=144)
          Point(X=60, Y=141)
          Point(X=60, Y=138)
          Point(X=60, Y=136)
          Point(X=61, Y=133)
          Point(X=62, Y=130)
          Point(X=64, Y=128)
          Point(X=66, Y=126)
          Point(X=68, Y=124)
          Point(X=70, Y=123)
          Point(X=73, Y=122)
          Point(X=75, Y=122)
          Point(X=78, Y=122)
          Point(X=81, Y=123)
          Point(X=83, Y=124)
          Point(X=85, Y=126)
          Point(X=87, Y=128)
          Point(X=89, Y=130)
          Point(X=90, Y=133)
          Point(X=91, Y=136)
        ArrayOfPoint(Point(X=172, Y=126), Point(X=199, Y=126), Point(X=199, Y=196), Point(X=172, Y=196))
    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false) => #108
    #107, #108 -> Sample
    -> MulticastSubject CurrentRois_G
    -> CreateObservable ROICsv_update
        WorkflowInput Source1
        -> Take(Count=1)
        -> SelectMany LogRois
            SubscribeSubject CurrentRois_G
            -> Merge
            -> ElementIndex
            -> SelectMany SaveSingleRoi
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Data

                SubscribeSubject Data
                -> MemberSelector(Selector=Index)
                -> AsyncSubject RoiIndex

                SubscribeSubject RoiIndex => #6
                SubscribeSubject Data
                -> MemberSelector(Selector=Value)
                -> Merge
                -> ElementIndex => #10
                #6, #10 -> CombineLatest
                -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Bonsai.IO.CsvWriter(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_G.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true) => #3
        SubscribeSubject RootPath
        -> Format(Format={0}/fib/FIP_ROIsG-Iso_.csv, Selector="")
        -> PropertyMapping(FileName) => #6
        #3, #6 -> Bonsai.IO.CsvWriter
          FileName=C:\behavior_data\447-3-D\0\behavior_0_2025-02-16_14-41-37/fib/FIP_ROIsG-Iso_.csv
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
        -> WorkflowOutput
    -> Merge
    -> DelaySubscription(DueTime=PT0.5S)

    SubscribeSubject Red
    -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]> => #115
      MemberName=Regions
      Value
        ArrayOfPoint
          Point(X=162, Y=88)
          Point(X=162, Y=91)
          Point(X=161, Y=94)
          Point(X=160, Y=97)
          Point(X=158, Y=100)
          Point(X=156, Y=102)
          Point(X=154, Y=104)
          Point(X=152, Y=105)
          Point(X=149, Y=106)
          Point(X=146, Y=106)
          Point(X=144, Y=106)
          Point(X=141, Y=105)
          Point(X=139, Y=104)
          Point(X=137, Y=102)
          Point(X=135, Y=100)
          Point(X=133, Y=97)
          Point(X=132, Y=94)
          Point(X=131, Y=91)
          Point(X=131, Y=88)
          Point(X=131, Y=85)
          Point(X=132, Y=82)
          Point(X=133, Y=79)
          Point(X=135, Y=76)
          Point(X=137, Y=74)
          Point(X=139, Y=72)
          Point(X=141, Y=71)
          Point(X=144, Y=70)
          Point(X=146, Y=70)
          Point(X=149, Y=70)
          Point(X=152, Y=71)
          Point(X=154, Y=72)
          Point(X=156, Y=74)
          Point(X=158, Y=76)
          Point(X=160, Y=79)
          Point(X=161, Y=82)
          Point(X=162, Y=85)
        ArrayOfPoint
          Point(X=101, Y=61)
          Point(X=101, Y=64)
          Point(X=100, Y=67)
          Point(X=99, Y=69)
          Point(X=98, Y=71)
          Point(X=96, Y=73)
          Point(X=94, Y=75)
          Point(X=92, Y=76)
          Point(X=89, Y=77)
          Point(X=87, Y=77)
          Point(X=85, Y=77)
          Point(X=82, Y=76)
          Point(X=80, Y=75)
          Point(X=78, Y=73)
          Point(X=76, Y=71)
          Point(X=75, Y=69)
          Point(X=74, Y=67)
          Point(X=73, Y=64)
          Point(X=73, Y=61)
          Point(X=73, Y=59)
          Point(X=74, Y=56)
          Point(X=75, Y=54)
          Point(X=76, Y=52)
          Point(X=78, Y=50)
          Point(X=80, Y=48)
          Point(X=82, Y=47)
          Point(X=85, Y=46)
          Point(X=87, Y=46)
          Point(X=89, Y=46)
          Point(X=92, Y=47)
          Point(X=94, Y=48)
          Point(X=96, Y=50)
          Point(X=98, Y=52)
          Point(X=99, Y=54)
          Point(X=100, Y=56)
          Point(X=101, Y=59)
        ArrayOfPoint
          Point(X=77, Y=119)
          Point(X=77, Y=122)
          Point(X=76, Y=125)
          Point(X=75, Y=128)
          Point(X=73, Y=130)
          Point(X=72, Y=132)
          Point(X=70, Y=134)
          Point(X=67, Y=135)
          Point(X=65, Y=136)
          Point(X=62, Y=136)
          Point(X=59, Y=136)
          Point(X=57, Y=135)
          Point(X=54, Y=134)
          Point(X=52, Y=132)
          Point(X=51, Y=130)
          Point(X=49, Y=128)
          Point(X=48, Y=125)
          Point(X=47, Y=122)
          Point(X=47, Y=119)
          Point(X=47, Y=117)
          Point(X=48, Y=114)
          Point(X=49, Y=111)
          Point(X=51, Y=109)
          Point(X=52, Y=107)
          Point(X=54, Y=105)
          Point(X=57, Y=104)
          Point(X=59, Y=103)
          Point(X=62, Y=103)
          Point(X=65, Y=103)
          Point(X=67, Y=104)
          Point(X=69, Y=105)
          Point(X=72, Y=107)
          Point(X=73, Y=109)
          Point(X=75, Y=111)
          Point(X=76, Y=114)
          Point(X=77, Y=117)
        ArrayOfPoint
          Point(X=127, Y=155)
          Point(X=127, Y=158)
          Point(X=126, Y=160)
          Point(X=125, Y=162)
          Point(X=124, Y=165)
          Point(X=122, Y=166)
          Point(X=120, Y=168)
          Point(X=118, Y=169)
          Point(X=115, Y=170)
          Point(X=113, Y=170)
          Point(X=111, Y=170)
          Point(X=108, Y=169)
          Point(X=106, Y=168)
          Point(X=104, Y=166)
          Point(X=102, Y=165)
          Point(X=101, Y=162)
          Point(X=100, Y=160)
          Point(X=99, Y=158)
          Point(X=99, Y=155)
          Point(X=99, Y=152)
          Point(X=100, Y=150)
          Point(X=101, Y=148)
          Point(X=102, Y=145)
          Point(X=104, Y=144)
          Point(X=106, Y=142)
          Point(X=108, Y=141)
          Point(X=111, Y=140)
          Point(X=113, Y=140)
          Point(X=115, Y=140)
          Point(X=118, Y=141)
          Point(X=120, Y=142)
          Point(X=122, Y=144)
          Point(X=124, Y=145)
          Point(X=125, Y=148)
          Point(X=126, Y=150)
          Point(X=127, Y=152)
        ArrayOfPoint(Point(X=0, Y=134), Point(X=26, Y=134), Point(X=26, Y=198), Point(X=0, Y=198))
    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false) => #116
    #115, #116 -> Sample
    -> MulticastSubject CurrentRois_R
    -> CreateObservable ROICsv_update
        WorkflowInput Source1
        -> Take(Count=1)
        -> SelectMany LogRois
            SubscribeSubject CurrentRois_R
            -> Merge
            -> ElementIndex
            -> SelectMany SaveSingleRoi
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Data

                SubscribeSubject Data
                -> MemberSelector(Selector=Index)
                -> AsyncSubject RoiIndex

                SubscribeSubject RoiIndex => #6
                SubscribeSubject Data
                -> MemberSelector(Selector=Value)
                -> Merge
                -> ElementIndex => #10
                #6, #10 -> CombineLatest
                -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Bonsai.IO.CsvWriter(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_R.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true) => #3
        SubscribeSubject RootPath
        -> Format(Format={0}/fib/FIP_ROIsR_.csv, Selector="")
        -> PropertyMapping(FileName) => #6
        #3, #6 -> Bonsai.IO.CsvWriter
          FileName=C:\behavior_data\447-3-D\0\behavior_0_2025-02-16_14-41-37/fib/FIP_ROIsR_.csv
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
        -> WorkflowOutput
    -> Merge
    -> DelaySubscription(DueTime=PT0.5S)

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_G.csv, ScanPattern="%i,%i,%i,%i", SkipRows=1) => #122
    -> ToArray
    -> OrderBy(KeySelector="Item1,Item2")
    -> Merge
    -> GroupBy(KeySelector=Item1)
    -> SelectMany ConstructRois
        WorkflowInput Source1
        -> Merge
        -> InputMapping(X(Selector=Item3), Y(Selector=Item4))
        -> Bonsai.Vision.CreatePoint(X=172, Y=198)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> MulticastSubject CurrentRois_G
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_ROIsG-Iso_.csv, Selector="")
    -> PropertyMapping(FileName) => #132
    #122, #132 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\447-3-D\0\behavior_0_2025-02-16_14-41-37/fib/FIP_ROIsG-Iso_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_R.csv, ScanPattern="%i,%i,%i,%i", SkipRows=1) => #134
    SubscribeSubject RootPath
    -> Format(Format={0}/fib/FIP_ROIsR_.csv, Selector="")
    -> PropertyMapping(FileName) => #137
    #134, #137 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\447-3-D\0\behavior_0_2025-02-16_14-41-37/fib/FIP_ROIsR_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    #134 -> ToArray
    -> OrderBy(KeySelector="Item1,Item2")
    -> Merge
    -> GroupBy(KeySelector=Item1)
    -> SelectMany ConstructRois
        WorkflowInput Source1
        -> Merge
        -> InputMapping(X(Selector=Item3), Y(Selector=Item4))
        -> Bonsai.Vision.CreatePoint(X=1, Y=199)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> MulticastSubject CurrentRois_R

    SubscribeSubject Red
    -> PropertySource<Bonsai.Vision.RoiActivity,OpenCV.Net.Point[][]> => #147
      MemberName=Regions
      Value
        ArrayOfPoint
          Point(X=96, Y=66)
          Point(X=96, Y=69)
          Point(X=95, Y=72)
          Point(X=94, Y=75)
          Point(X=92, Y=78)
          Point(X=90, Y=80)
          Point(X=88, Y=82)
          Point(X=86, Y=83)
          Point(X=83, Y=84)
          Point(X=80, Y=84)
          Point(X=78, Y=84)
          Point(X=75, Y=83)
          Point(X=73, Y=82)
          Point(X=71, Y=80)
          Point(X=69, Y=78)
          Point(X=67, Y=75)
          Point(X=66, Y=72)
          Point(X=65, Y=69)
          Point(X=65, Y=66)
          Point(X=65, Y=63)
          Point(X=66, Y=60)
          Point(X=67, Y=57)
          Point(X=69, Y=54)
          Point(X=71, Y=52)
          Point(X=73, Y=50)
          Point(X=75, Y=49)
          Point(X=78, Y=48)
          Point(X=80, Y=48)
          Point(X=83, Y=48)
          Point(X=86, Y=49)
          Point(X=88, Y=50)
          Point(X=90, Y=52)
          Point(X=92, Y=54)
          Point(X=94, Y=57)
          Point(X=95, Y=60)
          Point(X=96, Y=63)
        ArrayOfPoint
          Point(X=63, Y=112)
          Point(X=63, Y=115)
          Point(X=62, Y=118)
          Point(X=61, Y=120)
          Point(X=60, Y=122)
          Point(X=58, Y=124)
          Point(X=56, Y=126)
          Point(X=54, Y=127)
          Point(X=51, Y=128)
          Point(X=49, Y=128)
          Point(X=47, Y=128)
          Point(X=44, Y=127)
          Point(X=42, Y=126)
          Point(X=40, Y=124)
          Point(X=38, Y=122)
          Point(X=37, Y=120)
          Point(X=36, Y=118)
          Point(X=35, Y=115)
          Point(X=35, Y=112)
          Point(X=35, Y=110)
          Point(X=36, Y=107)
          Point(X=37, Y=105)
          Point(X=38, Y=103)
          Point(X=40, Y=101)
          Point(X=42, Y=99)
          Point(X=44, Y=98)
          Point(X=47, Y=97)
          Point(X=49, Y=97)
          Point(X=51, Y=97)
          Point(X=54, Y=98)
          Point(X=56, Y=99)
          Point(X=58, Y=101)
          Point(X=60, Y=103)
          Point(X=61, Y=105)
          Point(X=62, Y=107)
          Point(X=63, Y=110)
        ArrayOfPoint
          Point(X=119, Y=145)
          Point(X=119, Y=148)
          Point(X=118, Y=151)
          Point(X=117, Y=154)
          Point(X=115, Y=156)
          Point(X=114, Y=158)
          Point(X=112, Y=160)
          Point(X=109, Y=161)
          Point(X=107, Y=162)
          Point(X=104, Y=162)
          Point(X=101, Y=162)
          Point(X=99, Y=161)
          Point(X=96, Y=160)
          Point(X=94, Y=158)
          Point(X=93, Y=156)
          Point(X=91, Y=154)
          Point(X=90, Y=151)
          Point(X=89, Y=148)
          Point(X=89, Y=145)
          Point(X=89, Y=143)
          Point(X=90, Y=140)
          Point(X=91, Y=137)
          Point(X=93, Y=135)
          Point(X=94, Y=133)
          Point(X=96, Y=131)
          Point(X=99, Y=130)
          Point(X=101, Y=129)
          Point(X=104, Y=129)
          Point(X=107, Y=129)
          Point(X=109, Y=130)
          Point(X=111, Y=131)
          Point(X=114, Y=133)
          Point(X=115, Y=135)
          Point(X=117, Y=137)
          Point(X=118, Y=140)
          Point(X=119, Y=143)
        ArrayOfPoint
          Point(X=145, Y=95)
          Point(X=145, Y=98)
          Point(X=144, Y=100)
          Point(X=143, Y=102)
          Point(X=142, Y=105)
          Point(X=140, Y=106)
          Point(X=138, Y=108)
          Point(X=136, Y=109)
          Point(X=133, Y=110)
          Point(X=131, Y=110)
          Point(X=129, Y=110)
          Point(X=126, Y=109)
          Point(X=124, Y=108)
          Point(X=122, Y=106)
          Point(X=120, Y=105)
          Point(X=119, Y=102)
          Point(X=118, Y=100)
          Point(X=117, Y=98)
          Point(X=117, Y=95)
          Point(X=117, Y=92)
          Point(X=118, Y=90)
          Point(X=119, Y=88)
          Point(X=120, Y=85)
          Point(X=122, Y=84)
          Point(X=124, Y=82)
          Point(X=126, Y=81)
          Point(X=129, Y=80)
          Point(X=131, Y=80)
          Point(X=133, Y=80)
          Point(X=136, Y=81)
          Point(X=138, Y=82)
          Point(X=140, Y=84)
          Point(X=142, Y=85)
          Point(X=143, Y=88)
          Point(X=144, Y=90)
          Point(X=145, Y=92)
        ArrayOfPoint(Point(X=4, Y=131), Point(X=30, Y=131), Point(X=30, Y=195), Point(X=4, Y=195))
    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Alt", SuppressRepetitions=false) => #148
    #147, #148 -> Sample
    -> MulticastSubject CurrentRois_R
    -> CreateObservable ROICsv_update
        WorkflowInput Source1
        -> Take(Count=1)
        -> SelectMany LogRois
            SubscribeSubject CurrentRois_R
            -> Merge
            -> ElementIndex
            -> SelectMany SaveSingleRoi
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Data

                SubscribeSubject Data
                -> MemberSelector(Selector=Index)
                -> AsyncSubject RoiIndex

                SubscribeSubject RoiIndex => #6
                SubscribeSubject Data
                -> MemberSelector(Selector=Value)
                -> Merge
                -> ElementIndex => #10
                #6, #10 -> CombineLatest
                -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Bonsai.IO.CsvWriter(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_R.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
        -> WorkflowOutput
    -> Merge
    -> DelaySubscription(DueTime=PT0.5S)

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_G.csv, ScanPattern="%i,%i,%i,%i", SkipRows=1)
    -> ToArray
    -> OrderBy(KeySelector="Item1,Item2")
    -> Merge
    -> GroupBy(KeySelector=Item1)
    -> SelectMany ConstructRois
        WorkflowInput Source1
        -> Merge
        -> InputMapping(X(Selector=Item3), Y(Selector=Item4))
        -> Bonsai.Vision.CreatePoint(X=1, Y=199)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> MulticastSubject CurrentRois_G

    Bonsai.IO.CsvReader(FileName=C:\Users\svc_aind_behavior\Documents\FIPSettings\ROIs_R.csv, ScanPattern="%i,%i,%i,%i", SkipRows=1)
    -> ToArray
    -> OrderBy(KeySelector="Item1,Item2")
    -> Merge
    -> GroupBy(KeySelector=Item1)
    -> SelectMany ConstructRois
        WorkflowInput Source1
        -> Merge
        -> InputMapping(X(Selector=Item3), Y(Selector=Item4))
        -> Bonsai.Vision.CreatePoint(X=4, Y=195)
        -> ToArray
        -> WorkflowOutput
    -> ToArray
    -> MulticastSubject CurrentRois_R

    BehaviorSubject<OpenCV.Net.Point[][]> CurrentRois_G
    BehaviorSubject<OpenCV.Net.Point[][]> CurrentRois_R

    Disable SubscribeSubject CurrentRois_G
    -> Disable SelectMany LogRois
        SubscribeSubject CurrentRois_G
        -> Merge
        -> ElementIndex
        -> SelectMany SaveSingleRoi
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Data

            SubscribeSubject Data
            -> MemberSelector(Selector=Index)
            -> AsyncSubject RoiIndex

            SubscribeSubject RoiIndex => #6
            SubscribeSubject Data
            -> MemberSelector(Selector=Value)
            -> Merge
            -> ElementIndex => #10
            #6, #10 -> CombineLatest
            -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable Bonsai.IO.CsvWriter(FileName=C:\Users\svc_aind_behavior\Desktop\FIP_ExtTest\ROIs_G.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
    -> Disable DelaySubscription(DueTime=PT0.5S)

    Disable SubscribeSubject CurrentRois_R
    -> Disable SelectMany LogRois
        SubscribeSubject CurrentRois_R
        -> Merge
        -> ElementIndex
        -> SelectMany SaveSingleRoi
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Data

            SubscribeSubject Data
            -> MemberSelector(Selector=Index)
            -> AsyncSubject RoiIndex

            SubscribeSubject RoiIndex => #6
            SubscribeSubject Data
            -> MemberSelector(Selector=Value)
            -> Merge
            -> ElementIndex => #10
            #6, #10 -> CombineLatest
            -> MemberSelector(Selector="Item1,Item2.Index,Item2.Value.X,Item2.Value.Y")
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new( Item1 as RoiIndex, Item2 as PointIndex, Item3 as X, Item4 as Y)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Disable Bonsai.IO.CsvWriter(FileName=C:\Users\svc_aind_behavior\Desktop\FIP_ExtTest\ROIs_R.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=true)
    -> Disable DelaySubscription(DueTime=PT0.5S)

ExternalizedMapping(Value(DisplayName=RunCamera))
-> BooleanProperty(Value=true)
-> Disable Condition => #6
    WorkflowInput Source1
    -> WorkflowOutput
Disable GroupWorkflow BehaviorCam => #7
    Bonsai.Video.VideoCaptureDevice(Index=1, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #0
    -> Disable Bonsai.Vision.Flip(Mode=Both) => #1
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior-videos/FaceBottomCamera_.avi, Selector="")
    -> PropertyMapping(FileName) => #4
    #1, #4 -> Bonsai.Vision.VideoWriter
      FileName=C:\behavior_data\428-9-A\0\behavior_0_2024-05-01_13-39-56\fib/VideoFolder/FaceBottomCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior-videos/FaceBottomCamera_.csv, Selector="")
    -> PropertyMapping(FileName) => #10
    #7, #10 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\0\behavior_0_2024-05-01_13-39-56\fib/VideoFolder/FaceBottomCamera_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    Bonsai.Video.VideoCaptureDevice(Index=5, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #12
    -> Disable Bonsai.Dsp.Transpose => #13
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior-videos/FaceSideCamera_.avi, Selector="")
    -> PropertyMapping(FileName) => #16
    #13, #16 -> Bonsai.Vision.VideoWriter
      FileName=C:\behavior_data\428-9-A\0\behavior_0_2024-05-01_13-39-56\fib/VideoFolder/FaceSideCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #19
    SubscribeSubject RootPath
    -> Format(Format={0}/behavior-videos/FaceSideCamera_.csv, Selector="")
    -> PropertyMapping(FileName) => #22
    #19, #22 -> Bonsai.IO.CsvWriter
      FileName=C:\behavior_data\428-9-A\0\behavior_0_2024-05-01_13-39-56\fib/VideoFolder/FaceSideCamera_.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    #0 -> VisualizerMapping => #24
    #12 -> VisualizerMapping => #25
    #24, #25 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder "FIP Camera"(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
#6, #7 -> Disable SubscribeWhen
