<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:FipExtensions;assembly=Extensions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.CuttlefishFip;assembly=AllenNeuralDynamics.CuttlefishFip"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:p4="clr-namespace:NetMQ;assembly=NetMQ"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Cameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>_TriggeredCamerasInitialized</rx:Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CamerasReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>_TriggeredCamerasInitialized</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraGreenIso</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Gain" Selector="Gain" />
                <Property Name="Offset" Selector="Offset.X,Offset.Y" />
                <Property Name="SerialNumber" Selector="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FipSpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:ColorProcessing>Default</spk:ColorProcessing>
                <p1:Gain>0</p1:Gain>
                <p1:Offset>
                  <p1:X>0</p1:X>
                  <p1:Y>0</p1:Y>
                </p1:Offset>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ToFipFrame">
                <p1:CameraSource>GreenIso</p1:CameraSource>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CuttlefishFipEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="p2:Parse">
              <harp:Register xsi:type="p2:TimestampedTaskRisingEdgeEvent" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HasUv&amp;BlueFlags</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LightSourceUv</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Task.CameraPort</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Ports">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LightSourceBlue</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Task.CameraPort</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Ports">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="BitwiseOr" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="1" To="11" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="12" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>GreenIsoCamera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>_TriggeredCamerasInitialized</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraRed</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Gain" Selector="Gain" />
                <Property Name="Offset" Selector="Offset.X,Offset.Y" />
                <Property Name="SerialNumber" Selector="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FipSpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:ColorProcessing>Default</spk:ColorProcessing>
                <p1:Gain>0</p1:Gain>
                <p1:Offset>
                  <p1:X>0</p1:X>
                  <p1:Y>0</p1:Y>
                </p1:Offset>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ToFipFrame">
                <p1:CameraSource>Red</p1:CameraSource>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:FlipInPlace">
                <p3:FlipMode>Horizontal</p3:FlipMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CuttlefishFipEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="p2:Parse">
              <harp:Register xsi:type="p2:TimestampedTaskRisingEdgeEvent" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HasLimeFlags</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LightSourceLime</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Task.CameraPort</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p2:Ports">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RedCamera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1.Source</rx:KeySelector>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>CameraStreams</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="20" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="18" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="40" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="28" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="38" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="33" To="36" Label="Source2" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source2" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Harp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>CuttlefishFip</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>CuttlefishFipCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CuttlefishFip.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>Off</harp:VisualIndicators>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COMx</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>CuttlefishFipEvents</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggerHarpReadDump</Name>
                  </Expression>
                  <Expression xsi:type="harp:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:MuteReplies>false</harp:MuteReplies>
                      <harp:VisualIndicators>Off</harp:VisualIndicators>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CuttlefishFipCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CuttlefishFipEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>ClearTasks</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CuttlefishFipEvents</Name>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Timestamp</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HarpTimestampSource</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ZeroMQ</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Networking.ZmqSubscriber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ConnectionString" Selector="ConnectionString" />
                <Property Name="Topic" Selector="Topic" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Subscriber">
                <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SocketResponse</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>SocketRequest</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Networking.ZmqPublisher</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ConnectionString" Selector="ConnectionString" />
                <Property Name="Topic" Selector="Topic" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Publisher">
                <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Calibration</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LightSourceBlue</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateTaskFromLightSource" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p1:ToFipFrame,p1:FipCameraSource">
              <MemberName>CameraSource</MemberName>
              <Value>Green</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LightSourceUv</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateTaskFromLightSource" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p1:ToFipFrame,p1:FipCameraSource">
              <MemberName>CameraSource</MemberName>
              <Value>Iso</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LightSourceLime</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateTaskFromLightSource" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p1:ToFipFrame,p1:FipCameraSource">
              <MemberName>CameraSource</MemberName>
              <Value>Red</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CalibratedLightSources</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:ApplyTaskPowers" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="15" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="15" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="21" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>
