<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindPhysiologyFip;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:p5="clr-namespace:FipExtensions;assembly=Extensions"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.CuttlefishFip;assembly=AllenNeuralDynamics.CuttlefishFip"
                 xmlns:p7="clr-namespace:;assembly=Extensions"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:p8="clr-namespace:NetMQ;assembly=NetMQ"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p9="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p10="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\ReadSchemas.bonsai">
        <RigPath>../local/AindPhysioFipRig.json</RigPath>
        <SessionPath>../local/Session.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DeserializeSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindPhysioFipRig" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>Annotations</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="cv:Circle[]">
              <rx:Name>CurrentRedRoi</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="cv:Circle[]">
              <rx:Name>CurrentGreenIsoRoi</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:RoiSettings">
              <rx:Name>CurrentCombinedRoi</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p4:CreateRepository">
                <p4:Path>../.</p4:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SessionName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SessionName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataDirectory</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RootFolder" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
              <RootFolder />
              <SessionName xsi:nil="true" />
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>../local/default.json</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LocalRoiDefaultPath</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>ClearTasks</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BackgroundFramesCount</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RoiSettings</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentRoiSettings</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="26" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="26" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source3" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>_TriggeredCamerasInitialized</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>2</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>CamerasReady</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>_TriggeredCamerasInitialized</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CameraGreenIso</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Gain" Selector="Gain" />
                      <Property Name="Offset" Selector="Offset.X,Offset.Y" />
                      <Property Name="SerialNumber" Selector="SerialNumber" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:FipSpinnakerCapture">
                      <spk:Index xsi:nil="true" />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p5:Gain>0</p5:Gain>
                      <p5:Offset>
                        <p5:X>0</p5:X>
                        <p5:Y>0</p5:Y>
                      </p5:Offset>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:ToFipFrame">
                      <p5:CameraSource>GreenIso</p5:CameraSource>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CuttlefishFipEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p6:Parse">
                    <harp:Register xsi:type="p6:TimestampedTaskRisingEdgeEvent" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HasUv&amp;BlueFlags</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LightSourceUv</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Task.CameraPort</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p6:Ports">
                            <Value>None</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LightSourceBlue</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Task.CameraPort</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p6:Ports">
                            <Value>None</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseOr" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="1" To="11" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="12" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>GreenIsoCamera</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>_TriggeredCamerasInitialized</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>CameraRed</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Gain" Selector="Gain" />
                      <Property Name="Offset" Selector="Offset.X,Offset.Y" />
                      <Property Name="SerialNumber" Selector="SerialNumber" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:FipSpinnakerCapture">
                      <spk:Index xsi:nil="true" />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p5:Gain>0</p5:Gain>
                      <p5:Offset>
                        <p5:X>0</p5:X>
                        <p5:Y>0</p5:Y>
                      </p5:Offset>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:ToFipFrame">
                      <p5:CameraSource>Red</p5:CameraSource>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p7:FlipInPlace">
                      <p7:FlipMode>Horizontal</p7:FlipMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CuttlefishFipEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p6:Parse">
                    <harp:Register xsi:type="p6:TimestampedTaskRisingEdgeEvent" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HasLimeFlags</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LightSourceLime</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Task.CameraPort</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="HasFlag">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p6:Ports">
                            <Value>None</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>RedCamera</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item1.Source</rx:KeySelector>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>CameraStreams</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="11" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="20" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="15" To="18" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="40" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="28" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="38" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="33" To="36" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source2" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source2" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Harp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CuttlefishFip</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                          <rx:Name>CuttlefishFipCommands</rx:Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>CuttlefishFip.PortName</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="PortName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:Device">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:VisualIndicators>Off</harp:VisualIndicators>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                            <harp:IgnoreErrors>false</harp:IgnoreErrors>
                            <harp:PortName>COMx</harp:PortName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>CuttlefishFipEvents</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerHarpReadDump</Name>
                        </Expression>
                        <Expression xsi:type="harp:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:MuteReplies>false</harp:MuteReplies>
                            <harp:VisualIndicators>Off</harp:VisualIndicators>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>CuttlefishFipCommands</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CuttlefishFipEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>ClearTasks</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="4" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CuttlefishFipEvents</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:PayloadType>Timestamp</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ZeroMQ</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Networking.ZmqSubscriber</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ConnectionString" Selector="ConnectionString" />
                      <Property Name="Topic" Selector="Topic" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>SocketResponse</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p8:NetMQMessage">
                    <rx:Name>SocketRequest</rx:Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Networking.ZmqPublisher</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ConnectionString" Selector="ConnectionString" />
                      <Property Name="Topic" Selector="Topic" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Publisher">
                      <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Calibration</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LightSourceBlue</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p7:CreateTaskFromLightSource" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p5:ToFipFrame,p5:FipCameraSource">
                    <MemberName>CameraSource</MemberName>
                    <Value>Green</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LightSourceUv</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p7:CreateTaskFromLightSource" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p5:ToFipFrame,p5:FipCameraSource">
                    <MemberName>CameraSource</MemberName>
                    <Value>Iso</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LightSourceLime</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p7:CreateTaskFromLightSource" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p5:ToFipFrame,p5:FipCameraSource">
                    <MemberName>CameraSource</MemberName>
                    <Value>Red</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:ToDictionary">
                    <rx:KeySelector>Item2</rx:KeySelector>
                    <rx:ElementSelector>Item1</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CalibratedLasers</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="15" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="15" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="14" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source3" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualization.bonsai" />
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Text>FipVisualizer</ui:Text>
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size>
          <ui:Width>700</ui:Width>
          <ui:Height>1024</ui:Height>
        </ui:Size>
        <ui:WindowState>Normal</ui:WindowState>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationLogic.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Processing.bonsai" />
      <Expression xsi:type="rx:ReplaySubject">
        <Name>ParsedFipStreams</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>QA</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ProtocolValidation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repository</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:IsRepositoryClean">
                      <p4:IgnoreUntracked>false</p4:IgnoreUntracked>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AllowDirtyRepo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>AllowDirty?</scr:Name>
                    <scr:Expression>Item2 ? False : Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p9:ThrowException">
                      <p9:Message>Repository is not clean! Please discard all local changes.</p9:Message>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>CameraChecks</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CameraStreams</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>CheckDroppedFrames</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.FrameNumber</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Subtract">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>0</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Key</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="12" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source2" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>Camera {0} dropped frame detected during pre-session!</Format>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Message" Selector="it" />
                          </PropertyMappings>
                          <Selector>it</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p9:ThrowException">
                            <p9:Message>Dropped frame detected during pre-session!</p9:Message>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StartExperiment</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CameraStreams</Name>
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OnlineQC</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>InputSequence</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1.FrameTime</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Multiply">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>1E-09</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2.Seconds</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Difference">
                                  <dsp:Order>1</dsp:Order>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Subtract" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:Abs" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="JitterThreshold" />
                              </Expression>
                              <Expression xsi:type="GreaterThan">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>0.0005</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:ObserveOn">
                                  <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Period" DisplayName="SnoozeTime" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Timer">
                                  <rx:DueTime>PT0S</rx:DueTime>
                                  <rx:Period>PT10S</rx:Period>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Gate" />
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>MakeUI</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>InputSequence</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="Format">
                                      <Format>Camera {0} out-of-alignment qc was triggered.</Format>
                                      <Selector>it</Selector>
                                    </Expression>
                                    <Expression xsi:type="InputMapping">
                                      <PropertyMappings>
                                        <Property Name="Text" Selector="it" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p10:MessageBox">
                                        <p10:Text />
                                        <p10:Title>Warning</p10:Title>
                                        <p10:MessageBoxIcon>Exclamation</p10:MessageBoxIcon>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>InputSequence</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="Format">
                                      <Format>Camera {0} out-of-alignment qc was triggered.</Format>
                                      <Selector>it</Selector>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>HarpTimestampSource</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p9:CreateSoftwareEvent">
                                        <p9:EventName>HardwareQA</p9:EventName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>SoftwareEvent</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Zip" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="12" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="9" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source2" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source1" />
                                    <Edge From="11" To="12" Label="Source2" />
                                    <Edge From="12" To="13" Label="Source1" />
                                    <Edge From="13" To="14" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="4" To="8" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="10" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source2" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="14" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="19" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source2" />
                              <Edge From="19" To="20" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SkipHardwareValidation</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Cleanup</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="PropertySource" TypeArguments="p6:CreateSetTaskStatePayload,p6:TaskState">
              <MemberName>SetTaskState</MemberName>
              <Value>Stop</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SetTaskState</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>