<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:AindPhysiologyFip;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.CuttlefishFip;assembly=AllenNeuralDynamics.CuttlefishFip"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:p4="clr-namespace:;assembly=Extensions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="RigPath" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>../local/AindPhysioFipRig.json</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromJson">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindPhysioFipRig" />
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>Stop</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:DateTimeOffset">
              <rx:Name>BleachingStartTime</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:DateTimeOffset">
              <rx:Name>ScheduledStopTime</rx:Name>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LightSourceBlue</Selector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>BleachingLightSource</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CuttlefishFip</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>CuttlefishFipCommands</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CuttlefishFip.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="p3:Device">
                  <harp:OperationMode>Active</harp:OperationMode>
                  <harp:OperationLed>On</harp:OperationLed>
                  <harp:DumpRegisters>true</harp:DumpRegisters>
                  <harp:VisualIndicators>Off</harp:VisualIndicators>
                  <harp:Heartbeat>Enabled</harp:Heartbeat>
                  <harp:IgnoreErrors>false</harp:IgnoreErrors>
                  <harp:PortName>COMx</harp:PortName>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CuttlefishFipEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TurnOnLightSources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>CuttlefishFipEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ClearTasks</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="p3:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p3:CreateSetTaskStatePayload">
                      <p3:SetTaskState>Stop</p3:SetTaskState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CuttlefishFipCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.03S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p3:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p3:CreateClearAllTasksPayload">
                      <p3:ClearAllTasks>Enabled</p3:ClearAllTasks>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CuttlefishFipCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ConfigureContinuousTasks</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Annotation">
                    <Name>Continuous task</Name>
                    <Text><![CDATA[Same task as the calibration "Set CW" mode, on the blue light source only: full power (duty cycle 1), no camera trigger, no events, LED on for the whole Delta1 and no guard intervals. The port and PWM frequency come from the rig.]]></Text>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BleachingLightSource</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="PwmPort" Selector="Task.LightSourcePort" />
                      <Property Name="Frequency" Selector="Task.PwmFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:ConfigureTask">
                      <p3:MessageType>Write</p3:MessageType>
                      <p3:PwmPort>IO2</p3:PwmPort>
                      <p3:DutyCycle>1</p3:DutyCycle>
                      <p3:Frequency>10000</p3:Frequency>
                      <p3:TriggerPorts>None</p3:TriggerPorts>
                      <p3:EventsEnabled>false</p3:EventsEnabled>
                      <p3:IsMuted>false</p3:IsMuted>
                      <p3:Delta1>10000</p3:Delta1>
                      <p3:Delta2>0</p3:Delta2>
                      <p3:Delta3>0</p3:Delta3>
                      <p3:Delta4>0</p3:Delta4>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CuttlefishFipCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.3S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p3:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p3:CreateSetTaskStatePayload">
                <p3:SetTaskState>Start</p3:SetTaskState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CuttlefishFipCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BleachingStartTime</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Visualizer">
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:Defer">
              <Name>PhotobleachingControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="imvizui:ImGuiVisualizerBuilder">
                    <imvizui:Name>Photobleaching</imvizui:Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>frame</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>frame</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BleachingStartTime</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="StartTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ScheduledStopTime</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ScheduledStopTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:PhotobleachingVisualizer">
                      <p4:Visible>true</p4:Visible>
                      <p4:Details>Blue light source on at full power</p4:Details>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Stop</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>PhotobleachingGUI</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Text>Photobleaching</ui:Text>
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size>
          <ui:Width>700</ui:Width>
          <ui:Height>350</ui:Height>
        </ui:Size>
        <ui:WindowState>Normal</ui:WindowState>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Stop</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>TurnOffLightSources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="p3:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p3:CreateSetTaskStatePayload">
                <p3:SetTaskState>Stop</p3:SetTaskState>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CuttlefishFipCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.03S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p3:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p3:CreateClearAllTasksPayload">
                <p3:ClearAllTasks>Enabled</p3:ClearAllTasks>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CuttlefishFipCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>BleachingStartTime</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="StopTime" Description="The local time of day at which to stop, e.g. 08:00:00." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TimeSpanProperty">
          <Value>PT8H</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>NextStopTime</scr:Name>
        <scr:Description>Next local time, after the start, at which the clock reads StopTime.</scr:Description>
        <scr:Expression>Item1.LocalDateTime.Date.Add(Item2) &gt; Item1.LocalDateTime ? DateTimeOffset(Item1.LocalDateTime.Date.Add(Item2)) : DateTimeOffset(Item1.LocalDateTime.Date.Add(Item2).AddDays(1))</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ScheduledStopTime</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ScheduledStopTime</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>StopTimeReached</scr:Name>
        <scr:Expression>DateTimeOffset.Now &gt;= Item2</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>Stop</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="21" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>