<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:AindPhysiologyFip.Rig;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core.Design;assembly=AllenNeuralDynamics.Core.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>Annotations</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="cv:Circle[]">
              <rx:Name>CurrentRedRoi</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="cv:Circle[]">
              <rx:Name>CurrentGreenIsoRoi</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:RoiSettings">
              <rx:Name>CurrentCombinedRoi</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>../.local/default.json</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LocalRoiDefaultPath</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="15" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="15" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.05S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixReader">
          <dsp:Path>C:\Users\bruno.cruz\Desktop\fib\FIP_RawG_2025-03-19T16_22_06.bin</dsp:Path>
          <dsp:Offset>0</dsp:Offset>
          <dsp:SampleRate>0</dsp:SampleRate>
          <dsp:ChannelCount>1</dsp:ChannelCount>
          <dsp:BufferLength>40000</dsp:BufferLength>
          <dsp:Depth>U16</dsp:Depth>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Reshape">
          <dsp:Channels>1</dsp:Channels>
          <dsp:Rows>200</dsp:Rows>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertToImage" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new( it as Red, it as Green)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Raw</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Visualizer">
              <Name>Save/LoadRois</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExperimentState</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>SaveRoi</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>SaveRoi</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>SaveRoi</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>SaveRois</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CurrentCombinedRoi</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:SerializeToJson" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>LocalRoiDefaultPath</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Path" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="io:WriteAllText">
                                  <io:Path>../.local/default.json</io:Path>
                                  <io:Overwrite>true</io:Overwrite>
                                  <io:Append>false</io:Append>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="4" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExperimentState</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>LoadRoi</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>LoadRoi</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>LoadRoi</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>LoadRois</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>LocalRoiDefaultPath</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Path" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="io:ReadAllText">
                                  <io:Path>../.local/default.json</io:Path>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="p2:DeserializeFromJson">
                                <p2:Type xsi:type="TypeMapping" TypeArguments="p2:RoiSettings" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p3:RoiCircleConverter" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>GreenIso</Selector>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>CurrentGreenIsoRoi</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Red</Selector>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>CurrentRedRoi</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>0</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p4:MessageBox">
                                  <p4:Text>Could not load local ROI settings.</p4:Text>
                                  <p4:Title>Error</p4:Title>
                                  <p4:MessageBoxIcon>Exclamation</p4:MessageBoxIcon>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Catch" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="4" To="7" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="9" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="15" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping" />
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="12" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Visualizer">
              <Name>RoiManager</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:AindPhysioFipRig">
                      <p2:AindBehaviorServicesPkgVersion>0.10.2</p2:AindBehaviorServicesPkgVersion>
                      <p2:Version>0.1.0</p2:Version>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RoiSettings</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LocalRoiDefaultPath</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:LoadRoiDefault">
                      <p3:Path>../.local/default.json</p3:Path>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:RoiCircleConverter" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>GreenIso</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentGreenIsoRoi</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Red</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentRedRoi</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Raw</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Green</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentGreenIsoRoi</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="GreenIsoRoi" Description="Defines the Region of Interest for the Green/Iso Camera Chanenel" Category="RegionOfInterest" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p3:CircleActivityCalculator,cv:Circle[]">
                    <MemberName>Circles</MemberName>
                    <Value>
                      <Circle>
                        <Center>
                          <X>0</X>
                          <Y>0</Y>
                        </Center>
                        <Radius>50</Radius>
                      </Circle>
                      <Circle>
                        <Center>
                          <X>50</X>
                          <Y>50</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                      <Circle>
                        <Center>
                          <X>50</X>
                          <Y>150</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                      <Circle>
                        <Center>
                          <X>142</X>
                          <Y>103</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                      <Circle>
                        <Center>
                          <X>150</X>
                          <Y>150</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentGreenIsoRoi</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Raw</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Red</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentRedRoi</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Red" Description="Defines the Region of Interest for the Red Camera Chanenel" Category="RegionOfInterest" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p3:CircleActivityCalculator,cv:Circle[]">
                    <MemberName>Circles</MemberName>
                    <Value>
                      <Circle>
                        <Center>
                          <X>0</X>
                          <Y>0</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                      <Circle>
                        <Center>
                          <X>50</X>
                          <Y>50</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                      <Circle>
                        <Center>
                          <X>50</X>
                          <Y>150</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                      <Circle>
                        <Center>
                          <X>150</X>
                          <Y>50</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                      <Circle>
                        <Center>
                          <X>150</X>
                          <Y>150</Y>
                        </Center>
                        <Radius>20</Radius>
                      </Circle>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentRedRoi</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentGreenIsoRoi</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentRedRoi</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:RoiCircleConverter" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentCombinedRoi</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentCombinedRoi</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT0.02S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="AutoRefresh" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExperimentState</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:PropertyGridBuilder">
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:HelpVisible>true</gui:HelpVisible>
                    <gui:ToolbarVisible>true</gui:ToolbarVisible>
                    <gui:AutoRefresh>true</gui:AutoRefresh>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="18" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="18" Label="Source2" />
                  <Edge From="17" To="18" Label="Source3" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="27" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="27" Label="Source2" />
                  <Edge From="26" To="27" Label="Source3" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="30" To="32" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="42" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source2" />
                  <Edge From="42" To="43" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:PropertyGridVisualizer" />
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.1</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>0.9</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>GreenIsoActivity</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RedActivity</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Visualizer">
              <Name>LauncherControl</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExperimentState</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Enabled" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>Start</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>Start Experiment</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>StartExperimentToggleButton</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:ButtonBuilder">
                    <gui:Name>End</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:Text>End Experiment</gui:Text>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>EndExperimentButton</Name>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:ButtonVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>LauncherControl</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>2</gui:ColumnCount>
                    <gui:RowCount>1</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles />
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Annotation</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
                          <rx:Name>_ResetText</rx:Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Text" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="gui:TextBoxBuilder">
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Text />
                          <gui:Multiline>true</gui:Multiline>
                        </Expression>
                        <Expression xsi:type="rx:BehaviorSubject">
                          <Name>_TextBoxText</Name>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:ButtonBuilder">
                          <gui:Name>Send</gui:Name>
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:Text>Send</gui:Text>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>_SendButtonEvent</Name>
                        </Expression>
                        <Expression xsi:type="VisualizerMapping" />
                        <Expression xsi:type="gui:TableLayoutPanelBuilder">
                          <gui:Enabled>true</gui:Enabled>
                          <gui:Visible>true</gui:Visible>
                          <gui:ColumnCount>1</gui:ColumnCount>
                          <gui:RowCount>2</gui:RowCount>
                          <gui:ColumnStyles />
                          <gui:RowStyles>
                            <gui:RowStyle>
                              <gui:SizeType>Percent</gui:SizeType>
                              <gui:Height>0.8</gui:Height>
                            </gui:RowStyle>
                            <gui:RowStyle>
                              <gui:SizeType>Percent</gui:SizeType>
                              <gui:Height>0.2</gui:Height>
                            </gui:RowStyle>
                          </gui:RowStyles>
                          <gui:CellSpans />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>_SendButtonEvent</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>_TextBoxText</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="NotEqual">
                                <Operand xsi:type="StringProperty">
                                  <Value />
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>_ResetText</Name>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Annotations</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="9" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="13" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="VisualizerMapping">
                    <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
                  </Expression>
                  <Expression xsi:type="gui:TableLayoutPanelBuilder">
                    <gui:Name>LauncherControl</gui:Name>
                    <gui:Enabled>true</gui:Enabled>
                    <gui:Visible>true</gui:Visible>
                    <gui:ColumnCount>1</gui:ColumnCount>
                    <gui:RowCount>2</gui:RowCount>
                    <gui:ColumnStyles />
                    <gui:RowStyles>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>0.15</gui:Height>
                      </gui:RowStyle>
                      <gui:RowStyle>
                        <gui:SizeType>Percent</gui:SizeType>
                        <gui:Height>0.85</gui:Height>
                      </gui:RowStyle>
                    </gui:RowStyles>
                    <gui:CellSpans />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartExperimentToggleButton</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>StartExperimentShortcut</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EndExperimentButton</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>EndExperiment</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartExperiment</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="24" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TableLayoutPanelVisualizer" />
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 14.25pt</gui:Font>
              <gui:ColumnCount>4</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="15" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="15" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="15" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source4" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ProcessImages</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Raw</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Green</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentGreenIsoRoi</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Circles" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CircleActivityCalculator">
                <p3:Circles>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>0</p3:X>
                      <p3:Y>0</p3:Y>
                    </p3:Center>
                    <p3:Radius>50</p3:Radius>
                  </p3:Circle>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>50</p3:X>
                      <p3:Y>50</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>50</p3:X>
                      <p3:Y>150</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>142</p3:X>
                      <p3:Y>103</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>150</p3:X>
                      <p3:Y>150</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                </p3:Circles>
                <p3:Operation>Sum</p3:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>GreenIsoActivity</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Raw</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Red</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentRedRoi</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Circles" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CircleActivityCalculator">
                <p3:Circles>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>0</p3:X>
                      <p3:Y>0</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>50</p3:X>
                      <p3:Y>50</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>50</p3:X>
                      <p3:Y>150</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>150</p3:X>
                      <p3:Y>50</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                  <p3:Circle>
                    <p3:Center>
                      <p3:X>150</p3:X>
                      <p3:Y>150</p3:Y>
                    </p3:Center>
                    <p3:Radius>20</p3:Radius>
                  </p3:Circle>
                </p3:Circles>
                <p3:Operation>Sum</p3:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RedActivity</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>