WorkflowBuilder(Version=2.9.1)
Timer(DueTime=PT0S)
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: double(it)
-> ElementIndex

ExternalizedMapping(RigPath, SessionPath)
-> IncludeWorkflow
  Path=Extensions\ReadSchemas.bonsai
  RigPath=C:\git\AllenNeuralDynamics\Aind.Physiology.Fip\local\AindPhysioFipRig.json
  SessionPath=C:\git\AllenNeuralDynamics\Aind.Physiology.Fip\local\Session.json

GroupWorkflow DeserializeSchemas
    SubscribeSubject RawSessionSchema
    -> AindPhysiologyFip.DeserializeFromJson(Type=TypeMapping<AindPhysiologyFip.Session>)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> AindPhysiologyFip.DeserializeFromJson(Type=TypeMapping<AindPhysiologyFip.AindPhysioFipRig>)
    -> AsyncSubject RigSchema

GroupWorkflow Init
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.String> Annotations
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<Bonsai.Vision.Circle[]> CurrentRedRoi
    BehaviorSubject<AindPhysiologyFip.RoiSettings> CurrentCombinedRoi
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> StartLogging

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    BooleanProperty(Value=false)
    -> Take(Count=1) => #11
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #14
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #17
    #11, #14, #17 -> Merge
    -> BehaviorSubject ExperimentState

    BehaviorSubject<System.Reactive.Unit> ClearTasks

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

    StringProperty(Value=../local/default.json)
    -> Take(Count=1)
    -> AsyncSubject LocalRoiDefaultPath

    IntProperty(Value=10)
    -> Take(Count=1)
    -> AsyncSubject BackgroundFramesCount

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=RoiSettings)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
    -> BehaviorSubject CurrentRoiSettings

GroupWorkflow Hardware
    GroupWorkflow Cameras
        Timer(DueTime=PT0S, Period=PT0.0166S) => #0
        -> Slice(Start=0, Step=3, Stop=nil)
        -> Bonsai.Dsp.MatrixReader
          Path=C:\Users\bruno.cruz\Downloads\845023_2026-07-20_19-50-53\fib\fip_2025-12-17T152441\iso.bin
          Offset=0
          SampleRate=0
          ChannelCount=1
          BufferLength=40000
          Depth=U16
          Layout=RowMajor
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=200)
        -> Bonsai.Vision.ConvertToImage
        -> ElementIndex => #5
        -> MemberSelector(Selector=Value) => #6
        #5 -> MemberSelector(Selector=Index)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
          Expression: it * 3
        -> MemberSelector
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: int64(it)
        #6, #8, #10 -> Zip
        -> FipExtensions.ToFipFrame(CameraSource=GreenIso) => #12
        -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateTaskRisingEdgeEventPayload,AllenNeuralDynamics.CuttlefishFip.Ports>(MemberName=TaskRisingEdgeEvent, Value=IO0)
        -> Timestamp
        -> Bonsai.Harp.CreateTimestamped => #15
        #12, #15 -> Zip => #16
        #0 -> Slice(Start=1, Step=3, Stop=nil)
        -> Bonsai.Dsp.MatrixReader
          Path=C:\Users\bruno.cruz\Downloads\845023_2026-07-20_19-50-53\fib\fip_2025-12-17T152441\green.bin
          Offset=0
          SampleRate=0
          ChannelCount=1
          BufferLength=40000
          Depth=U16
          Layout=RowMajor
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=200)
        -> Bonsai.Vision.ConvertToImage
        -> ElementIndex => #21
        -> MemberSelector(Selector=Value) => #22
        #21 -> MemberSelector(Selector=Index)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #24
          Expression: it * 3 + 1
        -> MemberSelector
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #26
          Expression: int64(it)
        #22, #24, #26 -> Zip => #27
        -> FipExtensions.ToFipFrame(CameraSource=GreenIso) => #28
        #27 -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateTaskRisingEdgeEventPayload,AllenNeuralDynamics.CuttlefishFip.Ports>(MemberName=TaskRisingEdgeEvent, Value=IO1)
        -> Timestamp
        -> Bonsai.Harp.CreateTimestamped => #31
        #28, #31 -> Zip => #32
        #16, #32 -> Merge
        -> PublishSubject GreenIsoCamera => #34
        #0 -> Slice(Start=2, Step=3, Stop=nil)
        -> Bonsai.Dsp.MatrixReader
          Path=C:\Users\bruno.cruz\Downloads\845023_2026-07-20_19-50-53\fib\fip_2025-12-17T152441\red.bin
          Offset=0
          SampleRate=0
          ChannelCount=1
          BufferLength=40000
          Depth=U16
          Layout=RowMajor
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=200)
        -> Bonsai.Vision.ConvertToImage
        -> ElementIndex => #39
        -> MemberSelector(Selector=Value) => #40
        #39 -> MemberSelector(Selector=Index)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
          Expression: it * 3 + 2
        -> MemberSelector
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #44
          Expression: int64(it)
        #40, #42, #44 -> Zip => #45
        -> FipExtensions.ToFipFrame(CameraSource=Red) => #46
        #45 -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateTaskRisingEdgeEventPayload,AllenNeuralDynamics.CuttlefishFip.Ports>(MemberName=TaskRisingEdgeEvent, Value=IO2)
        -> Timestamp
        -> Bonsai.Harp.CreateTimestamped => #49
        #46, #49 -> Zip
        -> PublishSubject RedCamera => #51
        #34, #51 -> Merge
        -> GroupBy(KeySelector=Item1.Source)
        -> ReplaySubject CameraStreams(BufferSize=nil)

    GroupWorkflow Harp
        GroupWorkflow CuttlefishFip
            BehaviorSubject<Bonsai.Harp.HarpMessage> CuttlefishFipCommands
            PublishSubject<Bonsai.Harp.HarpMessage> CuttlefishFipEvents

            SubscribeSubject TriggerHarpReadDump
            -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=On, Heartbeat=Enabled)
            -> MulticastSubject CuttlefishFipCommands

        SubscribeSubject CuttlefishFipEvents
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> BehaviorSubject HarpTimestampSource

    GroupWorkflow Calibration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceBlue)
        -> CreateTaskFromLightSource => #2
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Green) => #3
        #2, #3 -> Zip => #4
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceUv)
        -> CreateTaskFromLightSource => #7
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Iso) => #8
        #7, #8 -> Zip => #9
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceLime)
        -> CreateTaskFromLightSource => #12
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Red) => #13
        #12, #13 -> Zip => #14
        #4, #9, #14 -> Merge
        -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
        -> Take(Count=1)
        -> AsyncSubject CalibratedLasers
        -> WorkflowOutput

GroupWorkflow OperationLogic
    SubscribeSubject StartExperimentShortcut
    -> SelectMany Stop
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject ClearTasks => #2
        SubscribeSubject CuttlefishFipEvents
        -> AllenNeuralDynamics.CuttlefishFip.Parse(Register=AllenNeuralDynamics.CuttlefishFip.ClearAllTasks) => #4
        #2, #4 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> Delay(DueTime=PT0.1S)
    -> SelectMany StartLogging
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject StartLogging
        -> WorkflowOutput
    -> Delay(DueTime=PT0.5S)
    -> SelectMany ConfigureWithoutLight
        WorkflowInput Source1
        -> CreateLaserTask(Payload=OffLaserTask)
        -> MulticastSubject TriggerTask
        -> WorkflowOutput
    -> Delay(DueTime=PT0.3S)
    -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Start)
    -> MulticastSubject SetTaskState
    -> SelectMany WaitBackgroundFrames
        SubscribeSubject ParsedFipStreams => #0
        SubscribeSubject CalibratedLasers
        -> MemberSelector(Selector=Count)
        -> PropertyMapping(Count) => #3
        #0, #3 -> Take(Count=3)
        -> Zip => #5
        SubscribeSubject BackgroundFramesCount
        -> PropertyMapping(Count) => #7
        #5, #7 -> Take(Count=10)
        -> Last
        -> Unit
        -> MulticastSubject ClearTasks
        -> WorkflowOutput
    -> Delay(DueTime=PT0.2S)
    -> SelectMany ConfigureTaskWithLight
        WorkflowInput Source1
        -> CreateLaserTask(Payload=FipModeLaserTask)
        -> MulticastSubject TriggerTask
        -> WorkflowOutput
    -> Delay(DueTime=PT0.2S)
    -> Unit
    -> MulticastSubject StartExperiment

    SubscribeSubject StartExperiment
    -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Start)
    -> MulticastSubject SetTaskState

    GroupWorkflow TriggeringLogic
        BehaviorSubject<ITriggerLaserTask> TriggerTask

        SubscribeSubject TriggerTask
        -> LaserTaskOfType(Type=TypeMapping<FipModeLaserTask>)
        -> CreateObservable CreateFipModeTasks => #3
            WorkflowInput Source1
            -> Sink ClearTasks
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject ClearTasks
                -> WorkflowOutput
            -> Delay(DueTime=PT0.05S)
            -> SelectMany MakeTaskConfiguration
                SubscribeSubject CalibratedLasers
                -> Merge
                -> CreateObservable
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject thisCalibration

                    SubscribeSubject thisCalibration
                    -> MemberSelector(Selector=Value)
                    -> InputMapping
                      PwmPort(Selector=LightSource.Task.LightSourcePort)
                      DutyCycle(Selector=CalibratedDutyCycle)
                      Frequency(Selector=LightSource.Task.PwmFrequency)
                      TriggerPorts(Selector=LightSource.Task.CameraPort)
                      EventsEnabled(Selector=LightSource.Task.EventsEnabled)
                      IsMuted(Selector=LightSource.Task.MuteOutput)
                      Delta1(Selector=LightSource.Task.Delta1)
                      Delta2(Selector=LightSource.Task.Delta2)
                      Delta3(Selector=LightSource.Task.Delta3)
                      Delta4(Selector=LightSource.Task.Delta4)
                    -> AllenNeuralDynamics.CuttlefishFip.ConfigureTask
                      MessageType=Write
                      PwmPort=IO4
                      DutyCycle=0.2
                      Frequency=10000
                      TriggerPorts=IO1
                      EventsEnabled=true
                      IsMuted=false
                      Delta1=15650
                      Delta2=666
                      Delta3=300
                      Delta4=50
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Merge => #3
                Timer(DueTime=PT0S, Period=PT0.03S) => #4
                #3, #4 -> Zip
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject TriggerTask
        -> LaserTaskOfType(Type=TypeMapping<ContinuousLaserTask>)
        -> CreateObservable CreateCalibrationModeTask => #6
            WorkflowInput Source1
            -> Sink ClearTasks
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject ClearTasks
                -> WorkflowOutput
            -> Delay(DueTime=PT0.05S)
            -> SelectMany MakeContinuousLaserTask
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject laser

                SubscribeSubject CalibratedLasers => #3
                SubscribeSubject laser
                -> MemberSelector(Selector=Channel)
                -> PropertyMapping(Value) => #6
                #3, #6 -> Index(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=Green))
                -> CreateObservable CreateContinuousTask
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject thisCalibration

                    SubscribeSubject thisCalibration => #3
                    SubscribeSubject thisCalibration
                    -> MemberSelector(Selector=LightSource.Task.LightSourcePort)
                    -> PropertyMapping(PwmPort) => #6
                    SubscribeSubject laser
                    -> MemberSelector(Selector=Power)
                    -> PropertyMapping(DutyCycle) => #9
                    #3, #6, #9 -> AllenNeuralDynamics.CuttlefishFip.ConfigureTask
                      MessageType=Write
                      PwmPort=IO2
                      DutyCycle=0.314
                      Frequency=10000
                      TriggerPorts=None
                      EventsEnabled=false
                      IsMuted=false
                      Delta1=10000
                      Delta2=0
                      Delta3=0
                      Delta4=0
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject TriggerTask
        -> LaserTaskOfType(Type=TypeMapping<OffLaserTask>) => #8
        Annotation "Implementation note"(Text="This mimicks the CreateFipModeTasks but sets PWM duty cycle to 0") => #9
        #8, #9 -> CreateObservable CreateFipModeTasksWithoutLight => #10
            WorkflowInput Source1
            -> Sink ClearTasks
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject ClearTasks
                -> WorkflowOutput
            -> Delay(DueTime=PT0.05S)
            -> SelectMany MakeTaskConfiguration
                SubscribeSubject CalibratedLasers
                -> Merge
                -> CreateObservable
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject thisCalibration

                    SubscribeSubject thisCalibration
                    -> MemberSelector(Selector=Value)
                    -> InputMapping => #5
                      PwmPort(Selector=LightSource.Task.LightSourcePort)
                      Frequency(Selector=LightSource.Task.PwmFrequency)
                      TriggerPorts(Selector=LightSource.Task.CameraPort)
                      EventsEnabled(Selector=LightSource.Task.EventsEnabled)
                      IsMuted(Selector=LightSource.Task.MuteOutput)
                      Delta1(Selector=LightSource.Task.Delta1)
                      Delta2(Selector=LightSource.Task.Delta2)
                      Delta3(Selector=LightSource.Task.Delta3)
                      Delta4(Selector=LightSource.Task.Delta4)
                    ExternalizedMapping(DutyCycle) => #6
                    #5, #6 -> AllenNeuralDynamics.CuttlefishFip.ConfigureTask
                      MessageType=Write
                      PwmPort=IO4
                      DutyCycle=0
                      Frequency=10000
                      TriggerPorts=IO1
                      EventsEnabled=true
                      IsMuted=false
                      Delta1=15650
                      Delta2=666
                      Delta3=300
                      Delta4=50
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Merge => #3
                Timer(DueTime=PT0S, Period=PT0.03S) => #4
                #3, #4 -> Zip
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> WorkflowOutput
        #3, #6, #10 -> Merge
        -> Switch
        -> MulticastSubject CuttlefishFipCommands

        SubscribeSubject ClearTasks
        -> CreateObservable ClearTasks
            AllenNeuralDynamics.CuttlefishFip.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload(SetTaskState=Stop))
            -> MulticastSubject CuttlefishFipCommands
            -> Delay(DueTime=PT0.03S)
            -> AllenNeuralDynamics.CuttlefishFip.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.CuttlefishFip.CreateClearAllTasksPayload(ClearAllTasks=Enabled))
            -> MulticastSubject CuttlefishFipCommands
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

        BehaviorSubject<AllenNeuralDynamics.CuttlefishFip.TaskState> SetTaskState
        -> AllenNeuralDynamics.CuttlefishFip.Format(MessageType=Write, Register=AllenNeuralDynamics.CuttlefishFip.SetTaskState)
        -> MulticastSubject CuttlefishFipCommands

IncludeWorkflow(Path=Extensions\Visualization.bonsai)
-> Bonsai.Design.VisualizerWindow(Text=FipVisualizer, Visible=true, Location=nil, Size(Width=700, Height=1024), WindowState=Normal)

GroupWorkflow Processing
    Defer Processing
        SubscribeSubject GreenIsoCamera
        -> Condition IsoChannel
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Value)
            -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=IO0))
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1,Item2.Seconds")
        -> Bonsai.Harp.CreateTimestamped => #3
        SubscribeSubject CurrentRoiSettings
        -> PropertyMapping(RoiSettings) => #5
        #3, #5 -> FipExtensions.CircleActivityCalculator(RoiSettings="", Source=Iso, Operation=Avg) => #6
        SubscribeSubject GreenIsoCamera
        -> Condition GreenChannel
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Value)
            -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=IO1))
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1,Item2.Seconds")
        -> Bonsai.Harp.CreateTimestamped => #10
        SubscribeSubject CurrentRoiSettings
        -> PropertyMapping(RoiSettings) => #12
        #10, #12 -> FipExtensions.CircleActivityCalculator(RoiSettings="", Source=Green, Operation=Avg) => #13
        SubscribeSubject RedCamera
        -> Condition RedChannel
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.Value)
            -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=IO2))
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1,Item2.Seconds")
        -> Bonsai.Harp.CreateTimestamped => #17
        SubscribeSubject CurrentRoiSettings
        -> PropertyMapping(RoiSettings) => #19
        #17, #19 -> FipExtensions.CircleActivityCalculator(RoiSettings="", Source=Red, Operation=Avg) => #20
        #6, #13, #20 -> Merge
        -> GroupBy(KeySelector=Value.FipFrame.Source, ElementSelector="")
        -> WorkflowOutput
    -> WorkflowOutput
-> ReplaySubject ParsedFipStreams(BufferSize=nil)
