WorkflowBuilder(Version=2.7.3)
GroupWorkflow RedCh
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391006, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #1
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
    #1 -> Bonsai.Vision.Flip(Mode=Horizontal)
    -> PublishSubject Red => #5
    -> Bonsai.Vision.RoiActivity => #6
      Regions
        ArrayOfPoint
          Point(X=71, Y=98)
          Point(X=71, Y=102)
          Point(X=70, Y=105)
          Point(X=69, Y=109)
          Point(X=67, Y=111)
          Point(X=65, Y=114)
          Point(X=63, Y=116)
          Point(X=60, Y=118)
          Point(X=57, Y=119)
          Point(X=54, Y=119)
          Point(X=52, Y=119)
          Point(X=49, Y=118)
          Point(X=46, Y=116)
          Point(X=44, Y=114)
          Point(X=42, Y=111)
          Point(X=40, Y=109)
          Point(X=39, Y=105)
          Point(X=38, Y=102)
          Point(X=38, Y=98)
          Point(X=38, Y=94)
          Point(X=39, Y=91)
          Point(X=40, Y=87)
          Point(X=42, Y=85)
          Point(X=44, Y=82)
          Point(X=46, Y=80)
          Point(X=49, Y=78)
          Point(X=52, Y=77)
          Point(X=54, Y=77)
          Point(X=57, Y=77)
          Point(X=60, Y=78)
          Point(X=63, Y=80)
          Point(X=65, Y=82)
          Point(X=67, Y=85)
          Point(X=69, Y=87)
          Point(X=70, Y=91)
          Point(X=71, Y=94)
        ArrayOfPoint
          Point(X=123, Y=79)
          Point(X=123, Y=83)
          Point(X=122, Y=86)
          Point(X=121, Y=89)
          Point(X=119, Y=92)
          Point(X=117, Y=95)
          Point(X=114, Y=97)
          Point(X=111, Y=99)
          Point(X=109, Y=100)
          Point(X=105, Y=100)
          Point(X=102, Y=100)
          Point(X=100, Y=99)
          Point(X=97, Y=97)
          Point(X=94, Y=95)
          Point(X=92, Y=92)
          Point(X=90, Y=89)
          Point(X=89, Y=86)
          Point(X=88, Y=83)
          Point(X=88, Y=79)
          Point(X=88, Y=75)
          Point(X=89, Y=72)
          Point(X=90, Y=69)
          Point(X=92, Y=66)
          Point(X=94, Y=63)
          Point(X=97, Y=61)
          Point(X=100, Y=59)
          Point(X=102, Y=58)
          Point(X=105, Y=58)
          Point(X=109, Y=58)
          Point(X=111, Y=59)
          Point(X=114, Y=61)
          Point(X=117, Y=63)
          Point(X=119, Y=66)
          Point(X=121, Y=69)
          Point(X=122, Y=72)
          Point(X=123, Y=75)
        ArrayOfPoint
          Point(X=151, Y=129)
          Point(X=151, Y=132)
          Point(X=150, Y=136)
          Point(X=149, Y=139)
          Point(X=147, Y=142)
          Point(X=145, Y=144)
          Point(X=143, Y=146)
          Point(X=140, Y=148)
          Point(X=137, Y=149)
          Point(X=134, Y=149)
          Point(X=131, Y=149)
          Point(X=128, Y=148)
          Point(X=125, Y=146)
          Point(X=123, Y=144)
          Point(X=121, Y=142)
          Point(X=119, Y=139)
          Point(X=118, Y=136)
          Point(X=117, Y=132)
          Point(X=117, Y=129)
          Point(X=117, Y=126)
          Point(X=118, Y=122)
          Point(X=119, Y=119)
          Point(X=121, Y=116)
          Point(X=123, Y=114)
          Point(X=125, Y=112)
          Point(X=128, Y=110)
          Point(X=131, Y=109)
          Point(X=134, Y=109)
          Point(X=137, Y=109)
          Point(X=140, Y=110)
          Point(X=143, Y=112)
          Point(X=145, Y=114)
          Point(X=147, Y=116)
          Point(X=149, Y=119)
          Point(X=150, Y=122)
          Point(X=151, Y=126)
        ArrayOfPoint
          Point(X=100, Y=147)
          Point(X=100, Y=150)
          Point(X=99, Y=154)
          Point(X=98, Y=157)
          Point(X=96, Y=160)
          Point(X=93, Y=162)
          Point(X=91, Y=164)
          Point(X=88, Y=166)
          Point(X=85, Y=167)
          Point(X=81, Y=167)
          Point(X=78, Y=167)
          Point(X=75, Y=166)
          Point(X=72, Y=164)
          Point(X=70, Y=162)
          Point(X=67, Y=160)
          Point(X=65, Y=157)
          Point(X=64, Y=154)
          Point(X=63, Y=150)
          Point(X=63, Y=147)
          Point(X=63, Y=144)
          Point(X=64, Y=140)
          Point(X=65, Y=137)
          Point(X=67, Y=134)
          Point(X=70, Y=132)
          Point(X=72, Y=130)
          Point(X=75, Y=128)
          Point(X=78, Y=127)
          Point(X=81, Y=127)
          Point(X=85, Y=127)
          Point(X=88, Y=128)
          Point(X=91, Y=130)
          Point(X=93, Y=132)
          Point(X=96, Y=134)
          Point(X=98, Y=137)
          Point(X=99, Y=140)
          Point(X=100, Y=144)
        ArrayOfPoint(Point(X=1, Y=1), Point(X=31, Y=1), Point(X=31, Y=66), Point(X=1, Y=66))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red0 => #9
    #6 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red1 => #12
    #6 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #14
    #6 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #16
    #6 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #18
    #3, #9, #12, #14, #16, #18 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\FIP_DataR_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #5 -> Bonsai.Dsp.MatrixWriter(Path=C:\PhotometryDataTemp\FIP_RawR_, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

GroupWorkflow GreenIsoCh
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391007, ColorProcessing=Default) => #0
    -> Skip(Count=0)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Green => #5
    -> Bonsai.Vision.RoiActivity => #6
      Regions
        ArrayOfPoint
          Point(X=70, Y=88)
          Point(X=70, Y=91)
          Point(X=69, Y=94)
          Point(X=68, Y=97)
          Point(X=66, Y=99)
          Point(X=64, Y=102)
          Point(X=62, Y=104)
          Point(X=59, Y=105)
          Point(X=57, Y=106)
          Point(X=54, Y=106)
          Point(X=51, Y=106)
          Point(X=49, Y=105)
          Point(X=46, Y=104)
          Point(X=44, Y=102)
          Point(X=42, Y=99)
          Point(X=40, Y=97)
          Point(X=39, Y=94)
          Point(X=38, Y=91)
          Point(X=38, Y=88)
          Point(X=38, Y=84)
          Point(X=39, Y=81)
          Point(X=40, Y=78)
          Point(X=42, Y=76)
          Point(X=44, Y=73)
          Point(X=46, Y=71)
          Point(X=49, Y=70)
          Point(X=51, Y=69)
          Point(X=54, Y=69)
          Point(X=57, Y=69)
          Point(X=59, Y=70)
          Point(X=62, Y=71)
          Point(X=64, Y=73)
          Point(X=66, Y=76)
          Point(X=68, Y=78)
          Point(X=69, Y=81)
          Point(X=70, Y=84)
        ArrayOfPoint
          Point(X=127, Y=73)
          Point(X=127, Y=76)
          Point(X=126, Y=79)
          Point(X=125, Y=81)
          Point(X=123, Y=84)
          Point(X=121, Y=86)
          Point(X=119, Y=88)
          Point(X=116, Y=89)
          Point(X=113, Y=90)
          Point(X=111, Y=90)
          Point(X=108, Y=90)
          Point(X=105, Y=89)
          Point(X=102, Y=88)
          Point(X=100, Y=86)
          Point(X=98, Y=84)
          Point(X=96, Y=81)
          Point(X=95, Y=79)
          Point(X=94, Y=76)
          Point(X=94, Y=73)
          Point(X=94, Y=70)
          Point(X=95, Y=67)
          Point(X=96, Y=65)
          Point(X=98, Y=62)
          Point(X=100, Y=60)
          Point(X=102, Y=58)
          Point(X=105, Y=57)
          Point(X=108, Y=56)
          Point(X=111, Y=56)
          Point(X=113, Y=56)
          Point(X=116, Y=57)
          Point(X=119, Y=58)
          Point(X=121, Y=60)
          Point(X=123, Y=62)
          Point(X=125, Y=65)
          Point(X=126, Y=67)
          Point(X=127, Y=70)
        ArrayOfPoint
          Point(X=151, Y=125)
          Point(X=151, Y=128)
          Point(X=150, Y=130)
          Point(X=149, Y=133)
          Point(X=147, Y=135)
          Point(X=146, Y=137)
          Point(X=143, Y=139)
          Point(X=141, Y=140)
          Point(X=139, Y=141)
          Point(X=136, Y=141)
          Point(X=133, Y=141)
          Point(X=131, Y=140)
          Point(X=129, Y=139)
          Point(X=126, Y=137)
          Point(X=125, Y=135)
          Point(X=123, Y=133)
          Point(X=122, Y=130)
          Point(X=121, Y=128)
          Point(X=121, Y=125)
          Point(X=121, Y=122)
          Point(X=122, Y=120)
          Point(X=123, Y=117)
          Point(X=125, Y=115)
          Point(X=126, Y=113)
          Point(X=128, Y=111)
          Point(X=131, Y=110)
          Point(X=133, Y=109)
          Point(X=136, Y=109)
          Point(X=139, Y=109)
          Point(X=141, Y=110)
          Point(X=143, Y=111)
          Point(X=146, Y=113)
          Point(X=147, Y=115)
          Point(X=149, Y=117)
          Point(X=150, Y=120)
          Point(X=151, Y=122)
        ArrayOfPoint
          Point(X=96, Y=139)
          Point(X=96, Y=142)
          Point(X=95, Y=145)
          Point(X=94, Y=148)
          Point(X=92, Y=150)
          Point(X=90, Y=152)
          Point(X=88, Y=154)
          Point(X=86, Y=155)
          Point(X=83, Y=156)
          Point(X=80, Y=156)
          Point(X=78, Y=156)
          Point(X=75, Y=155)
          Point(X=73, Y=154)
          Point(X=71, Y=152)
          Point(X=69, Y=150)
          Point(X=67, Y=148)
          Point(X=66, Y=145)
          Point(X=65, Y=142)
          Point(X=65, Y=139)
          Point(X=65, Y=136)
          Point(X=66, Y=133)
          Point(X=67, Y=130)
          Point(X=69, Y=128)
          Point(X=71, Y=126)
          Point(X=73, Y=124)
          Point(X=75, Y=123)
          Point(X=78, Y=122)
          Point(X=80, Y=122)
          Point(X=83, Y=122)
          Point(X=86, Y=123)
          Point(X=88, Y=124)
          Point(X=90, Y=126)
          Point(X=92, Y=128)
          Point(X=94, Y=130)
          Point(X=95, Y=133)
          Point(X=96, Y=136)
        ArrayOfPoint(Point(X=0, Y=0), Point(X=28, Y=0), Point(X=28, Y=68), Point(X=0, Y=68))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green0 => #9
    #6 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green1 => #12
    #6 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #14
    #6 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #16
    #6 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #18
    #5 -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #20
    #20, #9, #12, #14, #16, #18 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\FIP_DataG_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #5 -> Bonsai.Dsp.MatrixWriter(Path=C:\PhotometryDataTemp\FIP_RawG_, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #0 -> Skip(Count=1)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Iso => #28
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #30
    #28 -> Bonsai.Vision.RoiActivity => #31
      Regions
        ArrayOfPoint
          Point(X=74, Y=87)
          Point(X=74, Y=91)
          Point(X=73, Y=95)
          Point(X=72, Y=98)
          Point(X=70, Y=101)
          Point(X=67, Y=103)
          Point(X=65, Y=105)
          Point(X=62, Y=107)
          Point(X=59, Y=108)
          Point(X=56, Y=108)
          Point(X=52, Y=108)
          Point(X=49, Y=107)
          Point(X=46, Y=105)
          Point(X=44, Y=103)
          Point(X=41, Y=101)
          Point(X=39, Y=98)
          Point(X=38, Y=95)
          Point(X=37, Y=91)
          Point(X=37, Y=87)
          Point(X=37, Y=84)
          Point(X=38, Y=80)
          Point(X=39, Y=77)
          Point(X=41, Y=74)
          Point(X=44, Y=72)
          Point(X=46, Y=70)
          Point(X=49, Y=68)
          Point(X=52, Y=67)
          Point(X=56, Y=67)
          Point(X=59, Y=67)
          Point(X=62, Y=68)
          Point(X=65, Y=70)
          Point(X=67, Y=72)
          Point(X=70, Y=74)
          Point(X=72, Y=77)
          Point(X=73, Y=80)
          Point(X=74, Y=84)
        ArrayOfPoint
          Point(X=126, Y=72)
          Point(X=126, Y=75)
          Point(X=125, Y=79)
          Point(X=124, Y=82)
          Point(X=122, Y=85)
          Point(X=120, Y=87)
          Point(X=118, Y=89)
          Point(X=115, Y=91)
          Point(X=112, Y=92)
          Point(X=109, Y=92)
          Point(X=107, Y=92)
          Point(X=104, Y=91)
          Point(X=101, Y=89)
          Point(X=99, Y=87)
          Point(X=97, Y=85)
          Point(X=95, Y=82)
          Point(X=94, Y=79)
          Point(X=93, Y=75)
          Point(X=93, Y=72)
          Point(X=93, Y=69)
          Point(X=94, Y=65)
          Point(X=95, Y=62)
          Point(X=97, Y=59)
          Point(X=99, Y=57)
          Point(X=101, Y=55)
          Point(X=104, Y=53)
          Point(X=107, Y=52)
          Point(X=109, Y=52)
          Point(X=112, Y=52)
          Point(X=115, Y=53)
          Point(X=118, Y=55)
          Point(X=120, Y=57)
          Point(X=122, Y=59)
          Point(X=124, Y=62)
          Point(X=125, Y=65)
          Point(X=126, Y=69)
        ArrayOfPoint
          Point(X=154, Y=124)
          Point(X=154, Y=128)
          Point(X=153, Y=131)
          Point(X=152, Y=134)
          Point(X=150, Y=137)
          Point(X=148, Y=140)
          Point(X=145, Y=142)
          Point(X=142, Y=144)
          Point(X=139, Y=145)
          Point(X=136, Y=145)
          Point(X=133, Y=145)
          Point(X=130, Y=144)
          Point(X=127, Y=142)
          Point(X=124, Y=140)
          Point(X=122, Y=137)
          Point(X=120, Y=134)
          Point(X=119, Y=131)
          Point(X=118, Y=128)
          Point(X=118, Y=124)
          Point(X=118, Y=120)
          Point(X=119, Y=117)
          Point(X=120, Y=114)
          Point(X=122, Y=111)
          Point(X=124, Y=108)
          Point(X=127, Y=106)
          Point(X=130, Y=104)
          Point(X=133, Y=103)
          Point(X=136, Y=103)
          Point(X=139, Y=103)
          Point(X=142, Y=104)
          Point(X=145, Y=106)
          Point(X=148, Y=108)
          Point(X=150, Y=111)
          Point(X=152, Y=114)
          Point(X=153, Y=117)
          Point(X=154, Y=120)
        ArrayOfPoint
          Point(X=98, Y=139)
          Point(X=98, Y=143)
          Point(X=97, Y=147)
          Point(X=95, Y=150)
          Point(X=94, Y=153)
          Point(X=91, Y=156)
          Point(X=88, Y=158)
          Point(X=85, Y=160)
          Point(X=82, Y=161)
          Point(X=79, Y=161)
          Point(X=76, Y=161)
          Point(X=73, Y=160)
          Point(X=70, Y=158)
          Point(X=67, Y=156)
          Point(X=64, Y=153)
          Point(X=63, Y=150)
          Point(X=61, Y=147)
          Point(X=60, Y=143)
          Point(X=60, Y=139)
          Point(X=60, Y=135)
          Point(X=61, Y=131)
          Point(X=63, Y=128)
          Point(X=64, Y=125)
          Point(X=67, Y=122)
          Point(X=70, Y=120)
          Point(X=73, Y=118)
          Point(X=76, Y=117)
          Point(X=79, Y=117)
          Point(X=82, Y=117)
          Point(X=85, Y=118)
          Point(X=88, Y=120)
          Point(X=91, Y=122)
          Point(X=94, Y=125)
          Point(X=95, Y=128)
          Point(X=97, Y=131)
          Point(X=98, Y=135)
        ArrayOfPoint(Point(X=0, Y=0), Point(X=26, Y=0), Point(X=26, Y=78), Point(X=0, Y=78))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso0 => #34
    #31 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso1 => #37
    #31 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity) => #39
    #31 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #41
    #31 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #43
    #30, #34, #37, #39, #41, #43 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\FIP_DataIso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #28 -> Bonsai.Dsp.MatrixWriter(Path=C:\PhotometryDataTemp\FIP_RawIso_, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

GroupWorkflow FIP_Visualizer
    SubscribeSubject Green
    -> VisualizerMapping => #1
    SubscribeSubject Iso
    -> VisualizerMapping => #3
    SubscribeSubject Red
    -> VisualizerMapping => #5
    #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")

    SubscribeSubject Green0
    -> VisualizerMapping => #8
    SubscribeSubject Green1
    -> VisualizerMapping => #10
    SubscribeSubject Iso0
    -> VisualizerMapping => #12
    SubscribeSubject Iso1
    -> VisualizerMapping => #14
    SubscribeSubject Red0
    -> VisualizerMapping => #16
    SubscribeSubject Red1
    -> VisualizerMapping => #18
    #8, #10, #12, #14, #16, #18 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=6, ColumnStyles="", RowStyles="", CellSpans="")

GroupWorkflow BehaviorCam
    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #0
    -> Disable Bonsai.Vision.Flip(Mode=Both)
    -> Bonsai.Vision.VideoWriter
      FileName=C:\PhotometryDataTemp\FaceBottomCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\FaceBottomCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #0 -> VisualizerMapping => #6
    Bonsai.Video.VideoCaptureDevice(Index=1, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #7
    -> Disable Bonsai.Dsp.Transpose
    -> Bonsai.Vision.VideoWriter
      FileName=C:\PhotometryDataTemp\FaceSideCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds)
    -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\FaceSideCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #7 -> VisualizerMapping => #13
    #6, #13 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
