WorkflowBuilder(Version=2.7.3)
Disable GroupWorkflow OSC
    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC)
    -> Bonsai.Osc.Parse(Address=/startlogging, TypeTag=s)
    -> Take(Count=1)
    -> AsyncSubject RootPath

    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC, Port=4002, NoDelay=false, AllowNatTraversal=true)

StringProperty(Value=C:\PhotometryDataTemp\)
-> BehaviorSubject RootPath

GroupWorkflow BehaviorCam
    Bonsai.Video.VideoCaptureDevice(Index=1, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #0
    -> Disable Bonsai.Vision.Flip(Mode=Both) => #1
    SubscribeSubject RootPath
    -> Format(Format={0}/VideoFolder/FaceBottomCamera_.avi, Selector="")
    -> PropertyMapping(FileName) => #4
    #1, #4 -> Bonsai.Vision.VideoWriter
      FileName=C:\PhotometryDataTemp\/VideoFolder/FaceBottomCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
    SubscribeSubject RootPath
    -> Format(Format={0}/VideoFolder/FaceBottomCamera_.csv, Selector="")
    -> PropertyMapping(FileName) => #10
    #7, #10 -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\/VideoFolder/FaceBottomCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #0 -> VisualizerMapping => #12
    Bonsai.Video.VideoCaptureDevice(Index=5, Format(FrameSize(Width=800, Height=600), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="") => #13
    -> Disable Bonsai.Dsp.Transpose => #14
    SubscribeSubject RootPath
    -> Format(Format={0}/VideoFolder/FaceSideCamera_.avi, Selector="")
    -> PropertyMapping(FileName) => #17
    #14, #17 -> Bonsai.Vision.VideoWriter
      FileName=C:\PhotometryDataTemp\/VideoFolder/FaceSideCamera_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #20
    SubscribeSubject RootPath
    -> Format(Format={0}/VideoFolder/FaceSideCamera_.csv, Selector="")
    -> PropertyMapping(FileName) => #23
    #20, #23 -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\/VideoFolder/FaceSideCamera_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #13 -> VisualizerMapping => #25
    #12, #25 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")

GroupWorkflow FIP_Visualizer
    SubscribeSubject Green
    -> VisualizerMapping => #1
    SubscribeSubject Iso
    -> VisualizerMapping => #3
    SubscribeSubject Red
    -> VisualizerMapping => #5
    #1, #3, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")

    SubscribeSubject Green0
    -> VisualizerMapping => #8
    SubscribeSubject Green1
    -> VisualizerMapping => #10
    SubscribeSubject Iso0
    -> VisualizerMapping => #12
    SubscribeSubject Iso1
    -> VisualizerMapping => #14
    SubscribeSubject Red0
    -> VisualizerMapping => #16
    SubscribeSubject Red1
    -> VisualizerMapping => #18
    #8, #10, #12, #14, #16, #18 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=6, ColumnStyles="", RowStyles="", CellSpans="")

GroupWorkflow GreenIsoCh
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23391004, ColorProcessing=Default) => #0
    -> Skip(Count=0)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Green => #5
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay.TotalMilliseconds) => #7
    #5 -> Bonsai.Vision.RoiActivity => #8
      Regions
        ArrayOfPoint
          Point(X=126, Y=70)
          Point(X=126, Y=73)
          Point(X=124, Y=76)
          Point(X=123, Y=79)
          Point(X=121, Y=81)
          Point(X=119, Y=84)
          Point(X=117, Y=86)
          Point(X=114, Y=87)
          Point(X=112, Y=88)
          Point(X=109, Y=88)
          Point(X=105, Y=88)
          Point(X=103, Y=87)
          Point(X=100, Y=86)
          Point(X=98, Y=84)
          Point(X=96, Y=81)
          Point(X=94, Y=79)
          Point(X=93, Y=76)
          Point(X=92, Y=73)
          Point(X=92, Y=70)
          Point(X=92, Y=67)
          Point(X=93, Y=64)
          Point(X=94, Y=61)
          Point(X=96, Y=59)
          Point(X=98, Y=56)
          Point(X=100, Y=54)
          Point(X=103, Y=53)
          Point(X=105, Y=52)
          Point(X=109, Y=52)
          Point(X=112, Y=52)
          Point(X=114, Y=53)
          Point(X=117, Y=54)
          Point(X=119, Y=56)
          Point(X=121, Y=59)
          Point(X=123, Y=61)
          Point(X=124, Y=64)
          Point(X=126, Y=67)
        ArrayOfPoint
          Point(X=62, Y=56)
          Point(X=62, Y=59)
          Point(X=61, Y=62)
          Point(X=60, Y=64)
          Point(X=58, Y=68)
          Point(X=56, Y=70)
          Point(X=54, Y=72)
          Point(X=51, Y=73)
          Point(X=48, Y=75)
          Point(X=46, Y=75)
          Point(X=44, Y=75)
          Point(X=41, Y=73)
          Point(X=38, Y=72)
          Point(X=36, Y=70)
          Point(X=34, Y=68)
          Point(X=32, Y=64)
          Point(X=31, Y=62)
          Point(X=30, Y=59)
          Point(X=30, Y=56)
          Point(X=30, Y=52)
          Point(X=31, Y=49)
          Point(X=32, Y=47)
          Point(X=34, Y=43)
          Point(X=36, Y=41)
          Point(X=38, Y=39)
          Point(X=41, Y=38)
          Point(X=44, Y=37)
          Point(X=46, Y=37)
          Point(X=48, Y=37)
          Point(X=51, Y=38)
          Point(X=54, Y=39)
          Point(X=56, Y=41)
          Point(X=58, Y=43)
          Point(X=60, Y=47)
          Point(X=61, Y=49)
          Point(X=62, Y=52)
        ArrayOfPoint
          Point(X=49, Y=118)
          Point(X=49, Y=121)
          Point(X=48, Y=123)
          Point(X=47, Y=126)
          Point(X=45, Y=128)
          Point(X=44, Y=130)
          Point(X=41, Y=132)
          Point(X=39, Y=133)
          Point(X=37, Y=134)
          Point(X=34, Y=134)
          Point(X=31, Y=134)
          Point(X=29, Y=133)
          Point(X=27, Y=132)
          Point(X=24, Y=130)
          Point(X=23, Y=128)
          Point(X=21, Y=126)
          Point(X=20, Y=123)
          Point(X=19, Y=121)
          Point(X=19, Y=118)
          Point(X=19, Y=115)
          Point(X=20, Y=113)
          Point(X=21, Y=110)
          Point(X=23, Y=108)
          Point(X=24, Y=106)
          Point(X=26, Y=104)
          Point(X=29, Y=103)
          Point(X=31, Y=102)
          Point(X=34, Y=102)
          Point(X=37, Y=102)
          Point(X=39, Y=103)
          Point(X=41, Y=104)
          Point(X=44, Y=106)
          Point(X=45, Y=108)
          Point(X=47, Y=110)
          Point(X=48, Y=113)
          Point(X=49, Y=115)
        ArrayOfPoint
          Point(X=106, Y=142)
          Point(X=106, Y=145)
          Point(X=105, Y=148)
          Point(X=104, Y=151)
          Point(X=102, Y=153)
          Point(X=100, Y=155)
          Point(X=98, Y=157)
          Point(X=96, Y=158)
          Point(X=93, Y=159)
          Point(X=90, Y=159)
          Point(X=88, Y=159)
          Point(X=85, Y=158)
          Point(X=83, Y=157)
          Point(X=81, Y=155)
          Point(X=79, Y=153)
          Point(X=77, Y=151)
          Point(X=76, Y=148)
          Point(X=75, Y=145)
          Point(X=75, Y=142)
          Point(X=75, Y=139)
          Point(X=76, Y=136)
          Point(X=77, Y=133)
          Point(X=79, Y=131)
          Point(X=81, Y=129)
          Point(X=83, Y=127)
          Point(X=85, Y=126)
          Point(X=88, Y=125)
          Point(X=90, Y=125)
          Point(X=93, Y=125)
          Point(X=96, Y=126)
          Point(X=98, Y=127)
          Point(X=100, Y=129)
          Point(X=102, Y=131)
          Point(X=104, Y=133)
          Point(X=105, Y=136)
          Point(X=106, Y=139)
        ArrayOfPoint(Point(X=171, Y=4), Point(X=199, Y=4), Point(X=199, Y=72), Point(X=171, Y=72))
        ArrayOfPoint(Point(X=165, Y=165), Point(X=165, Y=165), Point(X=165, Y=166), Point(X=165, Y=166))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green0 => #11
    #8 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Green1 => #14
    #8 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #16
    #8 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #18
    #8 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #20
    #7, #11, #14, #16, #18, #20 -> Zip => #21
    SubscribeSubject RootPath
    -> Format(Format={0}/PhotometryFolder/FIP_DataG_.csv, Selector="")
    -> PropertyMapping(FileName) => #24
    #21, #24 -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\/PhotometryFolder/FIP_DataG_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/PhotometryFolder/FIP_RawG_.bin, Selector="")
    -> PropertyMapping(Path) => #28
    #5, #28 -> Bonsai.Dsp.MatrixWriter(Path=C:\PhotometryDataTemp\/PhotometryFolder/FIP_RawG_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
    #0 -> Skip(Count=1)
    -> BufferCount(Count=1, Skip=2)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Image)
    -> PublishSubject Iso => #34
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #36
    #34 -> Bonsai.Vision.RoiActivity => #37
      Regions
        ArrayOfPoint
          Point(X=124, Y=69)
          Point(X=124, Y=72)
          Point(X=124, Y=75)
          Point(X=123, Y=77)
          Point(X=121, Y=80)
          Point(X=119, Y=81)
          Point(X=117, Y=83)
          Point(X=114, Y=85)
          Point(X=112, Y=86)
          Point(X=109, Y=86)
          Point(X=106, Y=86)
          Point(X=104, Y=85)
          Point(X=101, Y=83)
          Point(X=99, Y=81)
          Point(X=97, Y=80)
          Point(X=95, Y=77)
          Point(X=94, Y=75)
          Point(X=94, Y=72)
          Point(X=94, Y=69)
          Point(X=94, Y=66)
          Point(X=94, Y=63)
          Point(X=95, Y=61)
          Point(X=97, Y=58)
          Point(X=99, Y=56)
          Point(X=101, Y=55)
          Point(X=104, Y=53)
          Point(X=106, Y=52)
          Point(X=109, Y=52)
          Point(X=112, Y=52)
          Point(X=114, Y=53)
          Point(X=117, Y=55)
          Point(X=119, Y=56)
          Point(X=121, Y=58)
          Point(X=123, Y=61)
          Point(X=124, Y=63)
          Point(X=124, Y=66)
        ArrayOfPoint
          Point(X=63, Y=55)
          Point(X=63, Y=58)
          Point(X=62, Y=62)
          Point(X=61, Y=65)
          Point(X=59, Y=68)
          Point(X=57, Y=70)
          Point(X=55, Y=72)
          Point(X=52, Y=74)
          Point(X=49, Y=75)
          Point(X=46, Y=75)
          Point(X=44, Y=75)
          Point(X=41, Y=74)
          Point(X=38, Y=72)
          Point(X=36, Y=70)
          Point(X=34, Y=68)
          Point(X=32, Y=65)
          Point(X=31, Y=62)
          Point(X=30, Y=58)
          Point(X=30, Y=55)
          Point(X=30, Y=52)
          Point(X=31, Y=48)
          Point(X=32, Y=45)
          Point(X=34, Y=42)
          Point(X=36, Y=40)
          Point(X=38, Y=38)
          Point(X=41, Y=36)
          Point(X=44, Y=35)
          Point(X=46, Y=35)
          Point(X=49, Y=35)
          Point(X=52, Y=36)
          Point(X=55, Y=38)
          Point(X=57, Y=40)
          Point(X=59, Y=42)
          Point(X=61, Y=45)
          Point(X=62, Y=48)
          Point(X=63, Y=52)
        ArrayOfPoint
          Point(X=52, Y=118)
          Point(X=52, Y=121)
          Point(X=51, Y=123)
          Point(X=50, Y=126)
          Point(X=48, Y=128)
          Point(X=46, Y=130)
          Point(X=43, Y=132)
          Point(X=40, Y=134)
          Point(X=37, Y=135)
          Point(X=35, Y=135)
          Point(X=32, Y=135)
          Point(X=29, Y=134)
          Point(X=26, Y=132)
          Point(X=23, Y=130)
          Point(X=21, Y=128)
          Point(X=19, Y=126)
          Point(X=18, Y=123)
          Point(X=18, Y=121)
          Point(X=18, Y=118)
          Point(X=18, Y=114)
          Point(X=18, Y=112)
          Point(X=19, Y=109)
          Point(X=21, Y=107)
          Point(X=23, Y=105)
          Point(X=26, Y=103)
          Point(X=29, Y=101)
          Point(X=32, Y=101)
          Point(X=35, Y=101)
          Point(X=37, Y=101)
          Point(X=40, Y=101)
          Point(X=43, Y=103)
          Point(X=46, Y=105)
          Point(X=48, Y=107)
          Point(X=50, Y=109)
          Point(X=51, Y=112)
          Point(X=52, Y=114)
        ArrayOfPoint
          Point(X=108, Y=142)
          Point(X=108, Y=145)
          Point(X=107, Y=148)
          Point(X=105, Y=150)
          Point(X=104, Y=152)
          Point(X=101, Y=155)
          Point(X=99, Y=156)
          Point(X=96, Y=158)
          Point(X=93, Y=159)
          Point(X=91, Y=159)
          Point(X=88, Y=159)
          Point(X=85, Y=158)
          Point(X=82, Y=156)
          Point(X=80, Y=155)
          Point(X=77, Y=152)
          Point(X=76, Y=150)
          Point(X=74, Y=148)
          Point(X=74, Y=145)
          Point(X=74, Y=142)
          Point(X=74, Y=138)
          Point(X=74, Y=135)
          Point(X=76, Y=133)
          Point(X=77, Y=131)
          Point(X=80, Y=128)
          Point(X=82, Y=127)
          Point(X=85, Y=125)
          Point(X=88, Y=125)
          Point(X=91, Y=125)
          Point(X=93, Y=125)
          Point(X=96, Y=125)
          Point(X=99, Y=127)
          Point(X=101, Y=128)
          Point(X=104, Y=131)
          Point(X=105, Y=133)
          Point(X=107, Y=135)
          Point(X=108, Y=138)
        ArrayOfPoint(Point(X=173, Y=3), Point(X=199, Y=3), Point(X=199, Y=81), Point(X=173, Y=81))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso0 => #40
    #37 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Iso1 => #43
    #37 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity) => #45
    #37 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #47
    #37 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #49
    #36, #40, #43, #45, #47, #49 -> Zip => #50
    SubscribeSubject RootPath
    -> Format(Format={0}/PhotometryFolder/FIP_DataIso_.csv, Selector="")
    -> PropertyMapping(FileName) => #53
    #50, #53 -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\/PhotometryFolder/FIP_DataIso_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/PhotometryFolder/FIP_RawIso_.bin, Selector="")
    -> PropertyMapping(Path) => #57
    #34, #57 -> Bonsai.Dsp.MatrixWriter(Path=C:\PhotometryDataTemp\/PhotometryFolder/FIP_RawIso_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)

GroupWorkflow RedCh
    Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23320855, ColorProcessing=Default)
    -> MemberSelector(Selector=Image) => #1
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #3
    #1 -> Bonsai.Vision.Flip(Mode=Horizontal)
    -> PublishSubject Red => #5
    -> Bonsai.Vision.RoiActivity => #6
      Regions
        ArrayOfPoint
          Point(X=174, Y=75)
          Point(X=174, Y=78)
          Point(X=173, Y=80)
          Point(X=172, Y=83)
          Point(X=170, Y=85)
          Point(X=168, Y=87)
          Point(X=166, Y=89)
          Point(X=164, Y=91)
          Point(X=161, Y=92)
          Point(X=159, Y=92)
          Point(X=157, Y=92)
          Point(X=154, Y=91)
          Point(X=152, Y=89)
          Point(X=150, Y=87)
          Point(X=148, Y=85)
          Point(X=146, Y=83)
          Point(X=145, Y=80)
          Point(X=144, Y=78)
          Point(X=144, Y=75)
          Point(X=144, Y=71)
          Point(X=145, Y=69)
          Point(X=146, Y=66)
          Point(X=148, Y=64)
          Point(X=150, Y=62)
          Point(X=152, Y=60)
          Point(X=154, Y=58)
          Point(X=157, Y=58)
          Point(X=159, Y=58)
          Point(X=161, Y=58)
          Point(X=164, Y=58)
          Point(X=166, Y=60)
          Point(X=168, Y=62)
          Point(X=170, Y=64)
          Point(X=172, Y=66)
          Point(X=173, Y=69)
          Point(X=174, Y=71)
        ArrayOfPoint
          Point(X=112, Y=57)
          Point(X=112, Y=60)
          Point(X=111, Y=62)
          Point(X=110, Y=65)
          Point(X=108, Y=67)
          Point(X=106, Y=69)
          Point(X=104, Y=71)
          Point(X=101, Y=73)
          Point(X=99, Y=74)
          Point(X=96, Y=74)
          Point(X=93, Y=74)
          Point(X=91, Y=73)
          Point(X=88, Y=71)
          Point(X=86, Y=69)
          Point(X=84, Y=67)
          Point(X=82, Y=65)
          Point(X=81, Y=62)
          Point(X=80, Y=60)
          Point(X=80, Y=57)
          Point(X=80, Y=53)
          Point(X=81, Y=51)
          Point(X=82, Y=48)
          Point(X=84, Y=46)
          Point(X=86, Y=44)
          Point(X=88, Y=42)
          Point(X=91, Y=40)
          Point(X=93, Y=40)
          Point(X=96, Y=40)
          Point(X=99, Y=40)
          Point(X=101, Y=40)
          Point(X=104, Y=42)
          Point(X=106, Y=44)
          Point(X=108, Y=46)
          Point(X=110, Y=48)
          Point(X=111, Y=51)
          Point(X=112, Y=53)
        ArrayOfPoint
          Point(X=98, Y=120)
          Point(X=98, Y=122)
          Point(X=97, Y=125)
          Point(X=96, Y=128)
          Point(X=94, Y=131)
          Point(X=92, Y=132)
          Point(X=90, Y=134)
          Point(X=88, Y=136)
          Point(X=85, Y=137)
          Point(X=83, Y=137)
          Point(X=80, Y=137)
          Point(X=77, Y=136)
          Point(X=75, Y=134)
          Point(X=73, Y=132)
          Point(X=71, Y=131)
          Point(X=69, Y=128)
          Point(X=68, Y=125)
          Point(X=68, Y=122)
          Point(X=68, Y=120)
          Point(X=68, Y=117)
          Point(X=68, Y=114)
          Point(X=69, Y=111)
          Point(X=71, Y=108)
          Point(X=73, Y=107)
          Point(X=75, Y=105)
          Point(X=77, Y=103)
          Point(X=80, Y=103)
          Point(X=83, Y=103)
          Point(X=85, Y=103)
          Point(X=88, Y=103)
          Point(X=90, Y=105)
          Point(X=92, Y=107)
          Point(X=94, Y=108)
          Point(X=96, Y=111)
          Point(X=97, Y=114)
          Point(X=98, Y=117)
        ArrayOfPoint
          Point(X=154, Y=146)
          Point(X=154, Y=148)
          Point(X=153, Y=151)
          Point(X=152, Y=154)
          Point(X=150, Y=156)
          Point(X=148, Y=158)
          Point(X=146, Y=159)
          Point(X=143, Y=161)
          Point(X=141, Y=162)
          Point(X=138, Y=162)
          Point(X=135, Y=162)
          Point(X=133, Y=161)
          Point(X=130, Y=159)
          Point(X=128, Y=158)
          Point(X=126, Y=156)
          Point(X=124, Y=154)
          Point(X=123, Y=151)
          Point(X=122, Y=148)
          Point(X=122, Y=146)
          Point(X=122, Y=143)
          Point(X=123, Y=140)
          Point(X=124, Y=138)
          Point(X=126, Y=135)
          Point(X=128, Y=134)
          Point(X=130, Y=132)
          Point(X=133, Y=130)
          Point(X=135, Y=130)
          Point(X=138, Y=130)
          Point(X=141, Y=130)
          Point(X=143, Y=130)
          Point(X=146, Y=132)
          Point(X=148, Y=134)
          Point(X=150, Y=135)
          Point(X=152, Y=138)
          Point(X=153, Y=140)
          Point(X=154, Y=143)
        ArrayOfPoint(Point(X=1, Y=1), Point(X=31, Y=1), Point(X=31, Y=66), Point(X=1, Y=66))
      Operation=Avg
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red0 => #9
    #6 -> Index(Operand=IntProperty(Value=1))
    -> MemberSelector(Selector=Activity.Val0)
    -> PublishSubject Red1 => #12
    #6 -> Index(Operand=IntProperty(Value=2))
    -> MemberSelector(Selector=Activity.Val0) => #14
    #6 -> Index(Operand=IntProperty(Value=3))
    -> MemberSelector(Selector=Activity.Val0) => #16
    #6 -> Index(Operand=IntProperty(Value=4))
    -> MemberSelector(Selector=Activity.Val0) => #18
    #3, #9, #12, #14, #16, #18 -> Zip => #19
    SubscribeSubject RootPath
    -> Format(Format={0}/PhotometryFolder/FIP_DataR_.csv, Selector="")
    -> PropertyMapping(FileName) => #22
    #19, #22 -> Bonsai.IO.CsvWriter(FileName=C:\PhotometryDataTemp\/PhotometryFolder/FIP_DataR_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    SubscribeSubject RootPath
    -> Format(Format={0}/PhotometryFolder/FIP_RawR_.bin, Selector="")
    -> PropertyMapping(Path) => #26
    #5, #26 -> Bonsai.Dsp.MatrixWriter(Path=C:\PhotometryDataTemp\/PhotometryFolder/FIP_RawR_.bin, Suffix=Timestamp, Overwrite=false, Layout=ColumnMajor)
